monkeyml version=1.0
io_devices "IO Devices"
  iodevice stimulus_display "Stimulus Display": background_color=0.5, 0.5, 0.5, announce_stimuli_on_implicit_updates=NO
  iodevice eyelink "Eyelink 1000": data_interval=1ms, tracker_ip=100.1.1.1, pupil_lx=eyeRX, pupil_ly=eyeRY, pupil_size_l=pupil_size, tracking_dist=1024
  iodevice mouse_input "Mouse Input Device": mouse_position_x=mouseX, mouse_position_y=mouseY, mouse_down=mouseDown, hide_cursor=YES
  calibrator linear_eye_calibrator "Eye Cal": eyeh_raw=eyeRX, eyev_raw=eyeRY, eyeh_calibrated=eye_x, eyev_calibrated=eye_y
  iodevice nidaq "NIDaq Device": name=Dev1, update_interval=2ms, analog_input_data_interval=1ms, analog_output_data_interval=1ms, assume_multiplexed_adc=YES
    iochannel nidaq_digital_output "NIDAQ Digital Output Channel": port_number=0, num_lines_in_port=8, line6=trialSync, line7=rewardOut
    iochannel nidaq_analog_input_voltage "NIDAQ Analog Input Voltage Channel": channel_number=0, range_min=-10.0, range_max=10.0, voltage=ai0
    iochannel nidaq_analog_output_voltage "NIDAQ Analog output Voltage Channel 2": channel_number=1, range_min=-10.0, range_max=10.0, voltage=stateAnalogOut
variables "Variables"
  folder "Eye"
    variable any "eyeRX": groups=Eye, logging=never, default_value=0, persistant=0
    variable any "eyeRY": groups=Eye, logging=never, default_value=0, persistant=0
    variable any "eye_x": groups=Eye, default_value=0, persistant=0
    variable any "eye_y": groups=Eye, default_value=0, persistant=0
    variable any "pupil_size": groups=Eye, default_value=0, persistant=0
  folder "eyeFix"
    variable any "fix_win": groups=eyeFix, default_value=7, persistant=1
    variable any "fix_sz": groups=eyeFix, default_value=0.5, persistant=0
    variable any "fixX": groups=eyeFix, default_value=0, persistant=0
    variable any "fixY": groups=eyeFix, default_value=0, persistant=0
    variable any "fix_red": groups=eyeFix, default_value=1, persistant=0
    variable any "fix_green": groups=eyeFix, default_value=1, persistant=0
    variable any "fix_blue": groups=eyeFix, default_value=1, persistant=0
    variable any "fixOn": groups=eyeFix, default_value=0, persistant=0
    variable any "dFixY": groups=eyeFix, default_value=0.0001, persistant=0
    variable any "fixWaitDur": groups=eyeFix, default_value=300000, persistant=1
    variable any "NoFixWaitDur": groups=eyeFix, default_value=1000, persistant=1
    variable any "GraceTimeDur": groups=eyeFix, default_value=200, persistant=0
  folder "target"
    variable any "targetOn": groups=target, default_value=0, persistant=0
    variable any "theta": groups=target, default_value=0, persistant=0
    variable any "thetaFeedback": groups=target, default_value=0, persistant=0
    variable any "theta_min": groups=target, default_value=0, persistant=0
    variable any "theta_max": groups=target, default_value=180, persistant=0
    variable any "theta_N": groups=target, default_value=2, persistant=0
    variable any "StartTheta": groups=target, default_value=0, persistant=0
    variable any "ballArcLength": groups=target, default_value=180, persistant=1
    variable integer "override": groups=target, default_value=0, persistant=0
    variable float "theta_override": groups=target, default_value=0, persistant=0
    variable any "amp": groups=target, default_value=10, persistant=0
    variable any "on_targ": groups=target, default_value=0, persistant=0
    variable any "targ_red": groups=target, default_value=1, persistant=0
    variable any "targ_green": groups=target, default_value=1, persistant=0
    variable any "targ_blue": groups=target, default_value=1, persistant=0
    variable any "targ_sz": groups=target, default_value=0.5, persistant=0
    variable any "target_x": groups=target, default_value=0, persistant=0
    variable any "target_y": groups=target, default_value=0, persistant=0
    variable any "target_alpha": groups=target, default_value=1, persistant=1
  folder "IO_potentiometer"
    variable any "ao0": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "ai0": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "doWord": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "doStrobe": groups=IO_potentiometer, default_value=0, persistant=0
    variable any "leftV": groups=IO_potentiometer, default_value=-0.001, persistant=0
    variable any "rightV": groups=IO_potentiometer, default_value=-5.02, persistant=0
    variable any "centerV": groups=IO_potentiometer, default_value=-2.51, persistant=0
    variable any "gainV": groups=IO_potentiometer, default_value=1.8, persistant=0
  folder "handFixation"
    variable any "leverFixWin": groups=handFixation, default_value=2, persistant=0
    variable any "leverFixWinBackCenter": groups=handFixation, default_value=2, persistant=0
    variable any "leverFixWinInit": groups=handFixation, default_value=2, persistant=0
    variable any "leverTarWin": groups=handFixation, default_value=18, persistant=0
    variable any "leverTarWinBackCenter": groups=handFixation, default_value=18, persistant=0
    variable any "leverTarWinInit": groups=handFixation, default_value=18, persistant=0
    variable any "handFixWin": groups=handFixation, default_value=5, persistant=0
    variable any "handFixOn": groups=handFixation, default_value=0, persistant=0
    variable any "handFixSz": groups=handFixation, default_value=0.5, persistant=0
    variable any "handFixAlpha": groups=handFixation, default_value=1, persistant=0
    variable any "handFixAlpha2": groups=handFixation, default_value=1, persistant=0
    variable any "pHandFix2": groups=handFixation, default_value=0.8, persistant=0
    variable any "handFixX": groups=handFixation, default_value=0, persistant=0
    variable any "handFixX2": groups=handFixation, default_value=0, persistant=0
    variable any "handFixY": groups=handFixation, default_value=0, persistant=0
    variable any "handFixB": groups=handFixation, default_value=1, persistant=0
    variable any "handFixG": groups=handFixation, default_value=1, persistant=0
    variable any "handFixR": groups=handFixation, default_value=1, persistant=0
    variable any "cursorX": groups=handFixation, default_value=0, persistant=0
    variable any "cursor2x": groups=handFixation, default_value=0, persistant=0
    variable any "cursor2x0": groups=handFixation, default_value=0, persistant=0
    variable any "cursorAlpha": groups=handFixation, default_value=1, persistant=0
    variable any "cursorAlpha2": groups=handFixation, default_value=0, persistant=0
  folder "handTarget"
    variable any "mouseX": groups=handTarget, default_value=0, persistant=0
    variable any "mouseY": groups=handTarget, default_value=0, persistant=0
    variable any "mouseDown": groups=handTarget, default_value=0, persistant=0
    variable any "handTargetWin": groups=handTarget, default_value=4, persistant=0
    variable any "handTargetOn": groups=handTarget, default_value=0, persistant=0
    variable any "handTarg_sz": groups=handTarget, default_value=0.5, persistant=0
    variable any "cursor2Alpha": groups=handTarget, default_value=0, persistant=0
    variable any "durCursorMove": groups=handTarget, default_value=1, persistant=0
    variable any "dtHandTargetHandFix": groups=handTarget, default_value=300, persistant=0
    variable any "dtSetHandTarget": groups=handTarget, default_value=0, persistant=0
    variable any "dtReadyHandTarget": groups=handTarget, default_value=0, persistant=0
  folder "Reward"
    variable any "rewardOut": groups=Reward, default_value=0, persistant=0
    variable any "rewardDur": groups=Reward, default_value=70, persistant=0
    variable any "bonusRewDur": groups=Reward, default_value=0, persistant=0
    variable any "totalRewDur": groups=Reward, default_value=0, persistant=0
    variable any "dbonus": groups=Reward, default_value=0, persistant=0
    variable any "consecutiveCorrect": groups=Reward, default_value=0, persistant=0
    variable any "consecutiveIncorrect": groups=Reward, default_value=0, persistant=0
    variable any "win_fraction": groups=Reward, default_value=0.15, persistant=1
    variable any "dwin": groups=Reward, default_value=0, persistant=1
  folder "RSGtiming"
    variable any "tStart": groups=RSGtiming, default_value=0, persistant=0
    variable any "fix_time_dur": groups=RSGtiming, default_value=0, persistant=0
    variable any "fix_dur_min": groups=RSGtiming, default_value=500, persistant=1
    variable any "fix_dur_mean": groups=RSGtiming, default_value=250, persistant=1
    variable any "targetTimeDur": groups=RSGtiming, default_value=1000, persistant=0
    variable any "target_dur_min": groups=RSGtiming, default_value=250, persistant=1
    variable any "target_dur_mean": groups=RSGtiming, default_value=250, persistant=1
    variable any "saccade_wait_dur": groups=RSGtiming, default_value=1000, persistant=0
    variable any "saccadeTimeDur": groups=RSGtiming, default_value=200, persistant=0
    variable any "handTimeDur": groups=RSGtiming, default_value=200, persistant=0
    variable any "dtProdRew": groups=RSGtiming, default_value=0
    variable any "FeedbackTimeDur": groups=RSGtiming, default_value=500, persistant=1
    variable any "iti": groups=RSGtiming, default_value=500, persistant=1
    variable any "itiShort": groups=RSGtiming, default_value=1220, persistant=1
    variable any "itiLong": groups=RSGtiming, default_value=500, persistant=1
    variable any "timeout": groups=RSGtiming, default_value=1000, persistant=1
  folder "trialBlock"
    variable any "localTrials": groups=trialBlock, default_value=0, persistant=0
    variable any "localCompleteTrials": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_trials": groups=trialBlock, default_value=0, persistant=0
    variable any "N_complete": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correct": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correctLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "MovingBall_correctRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortHandLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortHandRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortEyeLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctShortEyeRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongHandLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongHandRight": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongEyeLeft": groups=trialBlock, default_value=0, persistant=0
    variable any "N_correctLongEyeRight": groups=trialBlock, default_value=0, persistant=0
    variable any "minTrialNumBlock": groups=trialBlock, default_value=10, persistant=0
    variable any "meanTrialNumBlock": groups=trialBlock, default_value=3, persistant=0
    variable any "maxTrialNumBlock": groups=trialBlock, default_value=25, persistant=0
    variable any "trialNumBlockLong": groups=trialBlock, default_value=10, persistant=0
    variable any "trialNumBlockShort": groups=trialBlock, default_value=10, persistant=0
    variable any "trialNum": groups=trialBlock, default_value=5000, persistant=0
  folder "noSet"
    variable any "pNoSet": default_value=0.05
    variable any "idNoSet": default_value=0
    variable any "nNoSet": default_value=0
    variable any "nCorrectNoSet": default_value=0
    variable any "waitDur": default_value=400
  folder "RSG"
    variable any "interval": groups=RSG, default_value=800, persistant=0
    variable any "productionInterval": groups=RSG, default_value=0, persistant=0
    variable any "idShortLong": groups=RSG, default_value=0, persistant=0
    variable any "idHandEye": groups=RSG, default_value=1, persistant=0
    variable any "randTmp": groups=RSG, default_value=1, persistant=0
    variable any "interval_min": groups=RSG, default_value=500, persistant=1
    variable any "interval_minShort": groups=RSG, default_value=480, persistant=1
    variable any "interval_minLong": groups=RSG, default_value=800, persistant=1
    variable any "interval_max": groups=RSG, default_value=1200, persistant=1
    variable any "interval_maxShort": groups=RSG, default_value=800, persistant=1
    variable any "interval_maxLong": groups=RSG, default_value=1200, persistant=1
    variable any "interval_N": groups=RSG, default_value=5, persistant=1
    variable any "radius": groups=RSG, default_value=0, persistant=1
    variable any "ballFeedback_red": groups=RSG, default_value=1, persistant=0
    variable any "ballFeedback_green": groups=RSG, default_value=1, persistant=0
    variable any "ballFeedback_blue": groups=RSG, default_value=1, persistant=0
    variable any "Interval1_ending": groups=RSG, default_value=0, persistant=0
    variable any "Interval2_ending": groups=RSG, default_value=0, persistant=0
    variable any "ready_ended": groups=RSG, default_value=0, persistant=0
    variable any "set_ended": groups=RSG, default_value=0, persistant=0
    variable any "occluder_ended": groups=RSG, default_value=0, persistant=0
    variable any "set2_ended": groups=RSG, default_value=0, persistant=0
    variable any "acquisitionTime": groups=RSG, default_value=0, persistant=0
    variable any "ready_cue_onset_time_us": groups=RSG, default_value=0, persistant=0
    variable any "set1_cue_onset_time_us": groups=RSG, default_value=0, persistant=0
    variable any "set2_cue_onset_time_us": groups=RSG, default_value=1e1000, persistant=0
    variable any "intervalFrames": groups=RSG, default_value=0, persistant=0
    variable any "cue_duration_frames": groups=RSG, default_value=6, persistant=1
    variable any "cue_size_deg": groups=RSG, default_value=2.2, persistant=1
    variable boolean "afterReady": groups=RSG, default_value=0, persistant=0
    variable boolean "afterSet1": groups=RSG, default_value=0, persistant=0
    variable boolean "afterSet2": groups=RSG, default_value=0, persistant=0
    variable any "set2Off": groups=RSG, default_value=0, persistant=0
  folder "OverlapSaccade"
    variable any "idHandEyeOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correct": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeft": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeftHand": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctLeftEye": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRight": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRightHand": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_correctRightEye": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringOverlap": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_Hand2OtherTarget": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoEyeFixDuringRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoHandFixDuringRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_LateRT": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_NoFix": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "OverlapSaccade_trials": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "trialNum_OverlapSaccade": groups=OverlapSaccade, default_value=5000, persistant=0
    variable any "RTfromTargetOn": groups=OverlapSaccade, default_value=0, persistant=0
    variable any "minEyeRT": groups=OverlapSaccade, default_value=100, persistant=0
    variable any "minHandRT": groups=OverlapSaccade, default_value=100, persistant=0
  folder "Global"
    variable any "pstop": groups=Global, default_value=0, persistant=0
    variable any "startTrial": groups=Global, default_value=0, persistant=0
    variable any "endTrial": groups=Global, default_value=0, persistant=0
  folder "sync"
    variable any "syncX": groups=Matlab, default_value=-21, persistant=0
    variable any "syncY": groups=Matlab, default_value=12, persistant=0
    variable any "syncSize": groups=Matlab, default_value=3, persistant=0
    variable float "stateAnalogOut": groups=STATE, default_value=0, persistant=0
    variable any "trialSync": groups=Reward, default_value=0, persistant=0
  folder "Fixation+Pursuit"
    variable any "pursuitTheta": groups=Fixation, default_value=0, persistant=0
    variable any "on_fix_dyn": groups=Fixation, default_value=0, persistant=0
    variable any "fixHz": groups=Fixation, default_value=0.25, persistant=0
    variable any "fixDynMag": groups=Fixation, default_value=5, persistant=0
    variable any "fix_pur_trials": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_correct": groups=Fixation, default_value=0, persistant=0
    variable any "fix_pur_HoldDur": groups=Fixation, default_value=3000, persistant=1
    variable any "fix_pur_ITI_Dur": groups=Fixation, default_value=750, persistant=1
    variable any "fix_pur_timeoutDur": groups=Fixation, default_value=1500, persistant=1
  folder "Fixation+Distractor"
    variable any "idDistOverlap": groups=Distractor, default_value=0
    variable any "trialDuration": groups=Distractor, default_value=2500, persistant=0
    variable any "timeRemaining": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_trials": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_correct": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOnset_min": groups=Distractor, default_value=500, persistant=1
    variable any "distractorOnset_mu": groups=Distractor, default_value=500, persistant=1
    variable any "distractorOnset_time": groups=Distractor, default_value=0, persistant=0
    variable any "distractorTime_min": groups=Distractor, default_value=500, persistant=1
    variable any "distractorTime_mu": groups=Distractor, default_value=500, persistant=1
    variable any "distractorTime": groups=Distractor, default_value=0, persistant=0
    variable any "distractorSize": groups=Distractor, default_value=0.5, persistant=0
    variable any "distractor_alpha": groups=Distractor, default_value=1, persistant=0
    variable any "distractor_x": groups=Distractor, default_value=0, persistant=0
    variable any "distractor_y": groups=Distractor, default_value=0, persistant=0
    variable any "distractorOn": groups=Distractor, default_value=0, persistant=0
    variable boolean "DistractorSimultaneous": groups=Distractor, default_value=0, persistant=0
    variable any "fix_dis_ITI_Dur": groups=Distractor, default_value=750, persistant=1
  folder "MemorySaccade"
    variable any "MemorySaccade_correct": groups=Memory, default_value=0, persistant=0
    variable any "MemorySaccade_trials": groups=Memory, default_value=0, persistant=0
    variable any "memoryTimeDur": groups=Memory, default_value=1000, persistant=0
    variable any "memory_dur_min": groups=Memory, default_value=100, persistant=1
    variable any "memory_dur_mean": groups=Memory, default_value=0, persistant=1
  folder "RSGlegacy"
    variable any "ballAlpha": groups=RSGlegacy, default_value=0, persistant=0
    variable any "maxBallAlpha": groups=RSGlegacy, default_value=0.07, persistant=0
    variable any "ballAlphaProd": groups=RSGlegacy, default_value=0, persistant=0
    variable any "maxBallAlphaProd": groups=RSGlegacy, default_value=0.07, persistant=0
    variable any "dAlpha": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dballAlphaProd": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dballAlphaIncorrect": groups=RSGlegacy, default_value=0, persistant=1
    variable any "stimEnding": groups=RSGlegacy, default_value=0, persistant=0
    variable any "Nsets": groups=RSGlegacy, default_value=1, persistant=1
    variable any "ball_sz": groups=RSGlegacy, default_value=0.25, persistant=1
    variable any "radiusBall": groups=RSGlegacy, default_value=10, persistant=1
    variable any "radiusStep": groups=RSGlegacy, default_value=0, persistant=1
    variable any "numRadiusStepBoost": groups=RSGlegacy, default_value=10
    variable any "flashRate": groups=RSGlegacy, default_value=1, persistant=0
    variable any "flashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "setFlashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "thSetFlashAlpha": groups=RSGlegacy, default_value=1, persistant=1
    variable any "idFlashAlpha": groups=RSGlegacy, default_value=0, persistant=1
    variable any "dflashRate": groups=RSGlegacy, default_value=0, persistant=0
    variable any "ballRed": groups=RSGlegacy, default_value=1, persistant=0
    variable any "ballGreen": groups=RSGlegacy, default_value=1, persistant=0
    variable any "ballBlue": groups=RSGlegacy, default_value=1, persistant=0
    variable any "prodBallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable any "Interval2BallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable any "Interval1BallOn": groups=RSGlegacy, default_value=1, persistant=1
    variable boolean "fixOffMovingBall": groups=RSGlegacy, default_value=0, persistant=1
    variable any "relativeFixOffTime": groups=RSGlegacy, default_value=0, persistant=1
    variable any "idRandSet": groups=RSGlegacy, default_value=0
  folder "Matlab"
    variable any "sync": groups=Matlab, default_value=0, persistant=0
    variable any "Nback": groups=Matlab, default_value=0, persistant=1
sounds "Sounds"
stimuli "Stimuli"
  folder "Gobal"
    stimulus blank_screen "New Blank Screen": color=0, 0, 0
    stimulus circular_fixation_point "Fix": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=fix_sz, y_size=fix_sz, x_position=fixX, y_position=fixY, rotation=0, alpha_multiplier=1*(!((fixOffMovingBall)*((now()-set2_cue_onset_time_us)/1000 >= interval - relativeFixOffTime)*set2Off))
    stimulus circular_fixation_point "Fix2": color=0,0,0, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=fixOn, x_size=(fix_sz+handFixSz)*2, y_size=(fix_sz+handFixSz)*2, x_position=(fixX+handFixX)/2, y_position=(fixY+handFixY)/2, rotation=0, alpha_multiplier=1*(!((fixOffMovingBall)*((now()-set2_cue_onset_time_us)/1000 >= interval - relativeFixOffTime)*set2Off))
    stimulus fixation_point "handFix": color=handFixR,handFixG,handFixB, trigger_width=handFixWin, trigger_watch_x=mouseX, trigger_watch_y=mouseY, trigger_flag=handFixOn, x_size=handFixSz, y_size=handFixSz, x_position=handFixX, y_position=handFixY, rotation=0, alpha_multiplier=handFixAlpha
    stimulus rectangle "handFix2": color=0,0,0, x_size=handFixSz*pHandFix2, y_size=handFixSz*pHandFix2, x_position=handFixX, y_position=handFixY, rotation=0, alpha_multiplier=1
    stimulus circular_fixation_point "target": color=targ_red,targ_green,targ_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_targ, x_size=targ_sz, y_size=targ_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
    stimulus circular_fixation_point "handTarget": color=targ_red,targ_green,targ_blue, trigger_width=handTargetWin, trigger_watch_x=mouseX, trigger_watch_y=mouseY, trigger_flag=handTargetOn, x_size=handTarg_sz, y_size=handTarg_sz, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=target_alpha
    stimulus frame_list "cursor": stimulus_group=cursorFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "cursorFrames"
      stimulus rectangle "cursorDynamic": color=1,1,1, x_size=ball_sz, y_size=ball_sz, x_position=(ai0-centerV)/(rightV-centerV)*amp*gainV, y_position=handFixY, rotation=1, alpha_multiplier=cursorAlpha
    stimulus frame_list "cursor 2": stimulus_group=cursorFrames 2, loop=YES, repeats=0, autoplay=YES
    stimulus_group "cursorFrames 2"
      stimulus rectangle "cursorDynamic 2": color=1,1,1, x_size=ball_sz, y_size=ball_sz, x_position=cursor2x0+(target_x-cursor2x0)/(1e3*durCursorMove)*(nextFrameTime() - acquisitionTime), y_position=handFixY, rotation=1, alpha_multiplier=cursor2Alpha
    stimulus frame_list "syncFlash": stimulus_group=syncFlashFrames, loop=NO, repeats=0, autoplay=YES
    stimulus_group "syncFlashFrames"
      range_replicator "Repeat 2 times": from=1, to=2, step=1, variable=rr_index
        stimulus circle "syncFlashFrames_frame_${rr_index}": color=1,1,1, x_size=syncSize, y_size=syncSize, x_position=syncX, y_position=syncY, rotation=0, alpha_multiplier=1
  folder "Fixation+Pursuit"
    stimulus frame_list "dynamicFix": stimulus_group=dynamicFixFrames, loop=YES, repeats=0, autoplay=YES
    stimulus_group "dynamicFixFrames"
      stimulus circular_fixation_point "fixCircleDyn": color=fix_red,fix_green,fix_blue, trigger_width=fix_win, trigger_watch_x=eye_x, trigger_watch_y=eye_y, trigger_flag=on_fix_dyn, x_size=fix_sz, y_size=fix_sz, x_position=fixX+cos(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), y_position=fixY+sin(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6), rotation=0, alpha_multiplier=1
  folder "Fixation+Distractor"
    stimulus circle "Distractor": color=1,1,1, x_size=distractorSize, y_size=distractorSize, x_position=distractor_x, y_position=distractor_y, rotation=0, alpha_multiplier=distractor_alpha
  folder "MovingBall"
    stimulus circle "ballFeedback": color=ballFeedback_red,ballFeedback_green,ballFeedback_blue, x_size=ball_sz, y_size=ball_sz, x_position=amp*cos((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), y_position=amp*sin((pi()/180)*(StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval))), rotation=1, alpha_multiplier=1
    stimulus frame_list "ready_cue": stimulus_group=ready_frames, ended=ready_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "ready_frames"
      stimulus circle "ready_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+(fixY+handFixY)/2, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "occluder_cue": stimulus_group=occluder_frames, ended=occluder_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "occluder_frames"
      stimulus circle "occluder_frame": color=0,0,0, x_size=cue_size_deg*4/5, y_size=cue_size_deg*4/5, x_position=radius*cos(pi()/180*(StartTheta)), y_position=radius*sin(pi()/180*(StartTheta))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set_cue": stimulus_group=set_frames, ended=set_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set_frames"
      stimulus circle "set_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength/3)), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength/3))+fixY, rotation=0, alpha_multiplier=flashAlpha
    stimulus frame_list "set2_cue": stimulus_group=set2_frames, ended=set2_ended, loop=NO, repeats=cue_duration_frames, autoplay=YES
    stimulus_group "set2_frames"
      stimulus circle "set2_frame": color=1,1,1, x_size=cue_size_deg, y_size=cue_size_deg, x_position=radius*cos(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1))), y_position=radius*sin(pi()/180*(StartTheta+ballArcLength*Nsets/(Nsets+1)))+(fixY+handFixY)/2, rotation=0, alpha_multiplier=setFlashAlpha
    stimulus frame_list "Interval1": stimulus_group=Interval1_frames, ending=Interval1_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval1_frames"
      stimulus circle "Interval1Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=0
    stimulus frame_list "Interval2": stimulus_group=Interval2_frames, ending=Interval2_ending, loop=NO, repeats=intervalFrames, autoplay=YES
    stimulus_group "Interval2_frames"
      stimulus circle "Interval2Stim": color=0,0,0, x_size=0, y_size=0, x_position=100, y_position=100, rotation=0, alpha_multiplier=1
    stimulus frame_list "ball": stimulus_group=ballFrames, ending=stimEnding, repeats=(Nsets+1)*intervalFrames, loop=NO, autoplay=YES
    stimulus_group "ballFrames"
      stimulus circle "ballDynamic": color=ballRed,ballGreen,ballBlue, x_size=ball_sz, y_size=ball_sz, x_position=radiusBall*cos((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval))), y_position=radiusBall*sin((pi()/180)*(StartTheta+ballArcLength*(nextFrameTime() - tStart)/(1e3*(Nsets+1)*interval)))+fixY, rotation=1, alpha_multiplier=(ballAlpha*(!(Nsets == 1))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval2_ending))*(!(!Interval2BallOn*Interval1_ending*!Interval2_ending))*(!(!Interval1BallOn*!Interval1_ending)) + ballAlpha*(!(Nsets == 2))*(rand(0,1) <= flashRate)*(!(!prodBallOn*Interval1_ending))*(!(!Interval1BallOn*!Interval1_ending)))*(!Interval1_ending) +(Interval1_ending*ballAlphaProd)
filters "Filters"
optimizers "Optimizers"
experiment "New Experiment"
  protocol "Fixation+Pursuit_H": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action live_queue_stimulus "Live Queue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If on_fix_dyn, Transition to Trial Start": condition=on_fix_dyn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=0
        action start_timer "Start HoldFix": timer=HoldFix, duration=fix_pur_HoldDur, duration_units=ms
        transition conditional "If !on_fix_dyn, Transition to Bad": condition=!on_fix_dyn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to Reward": target=Reward, timer=HoldFix
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_pur_correct": variable=fix_pur_correct, value=fix_pur_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_pur_trials": variable=fix_pur_trials, value=fix_pur_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Pursuit System": condition=localTrials >= trialNum, target=Exit Fixation Pursuit System
        transition conditional "If pstop, Transition to Exit Fixation Pursuit System": condition=pstop, target=Exit Fixation Pursuit System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_pur_ITI": timer=fix_pur_ITI, duration=fix_pur_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_pur_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue dynamicFix": stimulus=dynamicFix
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Pursuit System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "Fixation+Pursuit_V": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
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      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=90
        action start_timer "Start HoldFix": timer=HoldFix, duration=fix_pur_HoldDur, duration_units=ms
        transition conditional "If !on_fix_dyn, Transition to Bad": condition=!on_fix_dyn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to Reward": target=Reward, timer=HoldFix
      task_system_state "Reward"
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      task_system_state "End Trial"
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      task_system_state "ITI"
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      task_system_state "Bad"
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      task_system_state "Failure to fixate"
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      task_system_state "Exit Fixation Pursuit System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "OverlapSaccadeHand": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=-1
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 3": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 4"
    task_system "Trials"
      task_system_state "Initial"
        action assignment "Assign stateAnalogOut": variable=stateAnalogOut, value=5*0/50
        action assignment "Assign localTrials": variable=localTrials, value=0
        action assignment "Assign ao0": variable=ao0, value=10
        action assignment "Assign centerV": variable=centerV, value=(leftV+rightV)/2
        action live_queue_stimulus "Live Queue Stimulus": stimulus=cursor
        action update_stimulus_display "Update Stimulus Display 7"
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign stateAnalogOut 2": variable=stateAnalogOut, value=5*1/50*5
        action assignment "Assign sync 2": variable=sync, value=1
        action assignment "Set idHandEyeOverlap:disc_rand(0,1)": variable=idHandEyeOverlap, value=disc_rand(0,1)
        action assignment "Assign cursorAlpha 3": variable=cursorAlpha, value=1
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign leverFixWin": variable=leverFixWin, value=leverFixWinInit
        action assignment "Assign leverTarWin": variable=leverTarWin, value=leverTarWinInit
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action live_queue_stimulus "Live Queue Fix 12": stimulus=handFix
        action assignment "Assign handFixY: fixY-(fix_sz+handFixSz)*3": variable=handFixY, value=handFixY
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign tStart 2": variable=tStart, value=now()
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn & handFixOn, Transition to Fix Time": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWin/2, target=Fix Time
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Fix Time"
        action assignment "Assign stateAnalogOut 3": variable=stateAnalogOut, value=5*2/50*5
        action pulse "Pulse trialSync 3": variable=trialSync, duration=10*1000
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign cursorAlpha 2": variable=cursorAlpha, value=cursorAlpha2
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action assignment "Store ready cue onset time 2": variable=ready_cue_onset_time_us, value=now()
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action queue_stimulus "Queue syncFlash 1111117": stimulus=syncFlash
        action update_stimulus_display "Update Stimulus Display 1111"
        action report "Report fixating": message=Fixating.
        transition conditional "If !handFixOn, Transition to NoHandFixDuringFix 2": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringFix
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringFix 2": condition=!fixOn, target=NoEyeFixDuringFix
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action assignment "Assign stateAnalogOut 4": variable=stateAnalogOut, value=20/50*5
        action assignment "Set fix_red to 1": variable=fix_red, value=1
        action if "If override, use theta_override 2": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Select theta -(theta-180) (mouseX>0)*181": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Set handFixR to 2": variable=handFixR, value=1
        action assignment "Set target_y 2": variable=target_y, value=amp*sin(theta*pi()/180)
        action assignment "Set target_x 2": variable=target_x, value=amp*cos(theta*pi()/180)
        action report "Annonce target direction 2": message=target direction = $theta
        action assignment "Set fix_blue to 2": variable=fix_blue, value=1
        action assignment "Set handFixB to 1": variable=handFixB, value=1
        action live_queue_stimulus "Live Queue target": stimulus=target
        action stop_dynamic_stimulus "reset syncFlash 1111114": stimulus=syncFlash
        action queue_stimulus "Queue syncFlash 1111118": stimulus=syncFlash
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store set cue onset time 2": variable=set1_cue_onset_time_us, value=now()
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If !handFixOn, Transition to NoHandFixDuringOverlap": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringOverlap
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringOverlap": condition=!fixOn, target=NoEyeFixDuringOverlap
        transition timer_expired "If saccadeTime Expired, Transition to Bad 2": target=Fix Off, timer=saccadeTime
      task_system_state "Fix Off"
        action assignment "Assign stateAnalogOut 5": variable=stateAnalogOut, value=30/50*5
        action if "If idHandEyeOverlap==0, hand": condition=!idHandEyeOverlap
          action dequeue_stimulus "Dequeue handFix": stimulus=handFix
        action if "If idHandEyeOverlap==1, eye": condition=idHandEyeOverlap
          action dequeue_stimulus "Dequeue eyeFix": stimulus=Fix
        action assignment "Store set2 cue onset time 2": variable=set2_cue_onset_time_us, value=now()
        action stop_dynamic_stimulus "reset syncFlash 1111113": stimulus=syncFlash
        action queue_stimulus "Queue syncFlash 1111119": stimulus=syncFlash
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime 2": timer=saccadeTime, duration=saccade_wait_dur, duration_units=ms
        transition conditional "If !idHandEyeOverlap && on_targ, Transition to reward delay": condition=!idHandEyeOverlap && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-target_x)<leverTarWin/2, target=reward delay
        transition conditional "If !idHandEyeOverlap && !fixOn, Transition to NoEyeFixDuringRT": condition=!idHandEyeOverlap && !fixOn, target=NoEyeFixDuringRT
        transition conditional "If !idHandEyeOverlap && go to the other target, Transition to Hand2OtherTarget": condition=!idHandEyeOverlap && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x))<leverTarWin/2, target=Hand2OtherTarget
        transition conditional "If idHandEyeOverlap && eye on_targ, Transition to reward delay": condition=idHandEyeOverlap && on_targ, target=reward delay
        transition conditional "If idHandEyeOverlap && !handFixOn, Transition to NoHandFixDuringRT": condition=idHandEyeOverlap && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringRT
        transition timer_expired "If saccadeTime Expired, Transition to LateRT": target=LateRT, timer=saccadeTime
      task_system_state "reward delay"
        action assignment "Assign stateAnalogOut 6": variable=stateAnalogOut, value=35/50*5
        action assignment "Assign acquisitionTime 2": variable=acquisitionTime, value=now()
        action assignment "Assign productionInterval 2": variable=productionInterval, value=(acquisitionTime-set2_cue_onset_time_us)/1000
        action assignment "Assign RTfromTargetOn": variable=RTfromTargetOn, value=(acquisitionTime-set1_cue_onset_time_us)/1000
        action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
        transition timer_expired "If cursorMove Expired, Transition to Rewarde": target=Reward, timer=cursorMove
      task_system_state "Reward"
        action assignment "Assign stateAnalogOut 7": variable=stateAnalogOut, value=40/50*5
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action stop_dynamic_stimulus "reset syncFlash 1111115": stimulus=syncFlash
        action queue_stimulus "Queue syncFlash 11111110": stimulus=syncFlash
        action update_stimulus_display "Update Stimulus Display"
        action if "If hand && RT>minHandRT, reward": condition=!idHandEyeOverlap && productionInterval>minHandRT
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=dbonus*(saccade_wait_dur-productionInterval)/saccade_wait_dur
          action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action if "If eye && RT>minEyeRT, reward": condition=idHandEyeOverlap && productionInterval>minEyeRT
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=dbonus*(saccade_wait_dur-productionInterval)/saccade_wait_dur
          action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action if "If 0==1/consecutiveCorrect>0, use new theta 2": condition=0==1
          action assignment "Select theta -(theta-180) (mouseX>0)*180": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Assign cursorX": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
        action assignment "Assign handTargetOn": variable=handTargetOn, value=0
        action assignment "Assign totalRewDur 4": variable=totalRewDur, value=(rewardDur+bonusRewDur)
        action assignment "increment OverlapSaccade_correctLeftHand": variable=OverlapSaccade_correctLeftHand, value=OverlapSaccade_correctLeftHand +(idHandEyeOverlap==0)*(theta>90)
        action assignment "increment OverlapSaccade_correctLeftEye": variable=OverlapSaccade_correctLeftEye, value=OverlapSaccade_correctLeftEye +(idHandEyeOverlap==1)*(theta>90)
        action assignment "increment OverlapSaccade_correctRightHand": variable=OverlapSaccade_correctRightHand, value=OverlapSaccade_correctRightHand +(idHandEyeOverlap==0)*(theta<90)
        action assignment "increment OverlapSaccade_correctRightEye": variable=OverlapSaccade_correctRightEye, value=OverlapSaccade_correctRightEye +(idHandEyeOverlap==1)*(theta<90)
        action if "If theta>90, increment OverlapSaccade_correctLeft 2": condition=theta>90
          action assignment "increment OverlapSaccade_correctLeft": variable=OverlapSaccade_correctLeft, value=OverlapSaccade_correctLeft+1
        action if "If theta<=90, increment OverlapSaccade_correctRight 2": condition=theta<=90
          action assignment "increment OverlapSaccade_correctLeft": variable=OverlapSaccade_correctRight, value=OverlapSaccade_correctRight+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=totalRewDur, duration_units=ms
        action assignment "Increment OverlapSaccade_correct": variable=OverlapSaccade_correct, value=OverlapSaccade_correct+1
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action assignment "Assign stateAnalogOut 8": variable=stateAnalogOut, value=45/50*5
        action assignment "Set handFixR to 1": variable=handFixR, value=1
        action assignment "Set handFixR to 6": variable=handFixG, value=1
        action assignment "Set handFixB to 4": variable=handFixB, value=1
        action assignment "Set fix_red to 5": variable=fix_green, value=1
        action assignment "Set fix_red to 6": variable=fix_blue, value=1
        action assignment "Set fix_red to 7": variable=fix_red, value=1
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Set targ_green to 2": variable=targ_green, value=1
        action assignment "Set targ_blue to 3": variable=targ_blue, value=1
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue Fix 16": stimulus=Fix
        action dequeue_stimulus "Dequeue Fix 15": stimulus=handFix
        action update_stimulus_display "Update Stimulus Display 10"
        action assignment "Increment OverlapSaccade_trials": variable=OverlapSaccade_trials, value=OverlapSaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign sync 3": variable=sync, value=0
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum_OverlapSaccade, Transition to Exit State System": condition=localTrials >= trialNum_OverlapSaccade || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action assignment "Assign stateAnalogOut 9": variable=stateAnalogOut, value=0
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Bad"
        action assignment "Assign stateAnalogOut 10": variable=stateAnalogOut, value=0
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action assignment "Assign handFixX 2": variable=handFixX, value=0
        action dequeue_stimulus "Dequeue Fix 113": stimulus=Fix
        action dequeue_stimulus "Dequeue target 5": stimulus=target
        action dequeue_stimulus "Dequeue Fix 114": stimulus=handFix
        action update_stimulus_display "Update Stimulus Display 16"
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "NoEyeFixDuringFix"
        action assignment "Assign stateAnalogOut 11": variable=stateAnalogOut, value=13/50*5
        action assignment "Set fix_red to 9": variable=fix_green, value=0
        action assignment "Set fix_red to 8": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringFix": variable=OverlapSaccade_NoEyeFixDuringFix, value=OverlapSaccade_NoEyeFixDuringFix+1
        action start_timer "Start Feedback 8": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 8": target=Bad, timer=Feedback
      task_system_state "NoHandFixDuringFix"
        action assignment "Assign stateAnalogOut 12": variable=stateAnalogOut, value=7/50*5
        action assignment "Set handFixR to 7": variable=handFixB, value=0
        action assignment "Set handFixB to 9": variable=handFixG, value=0
        action update_stimulus_display "Update Stimulus Display 13"
        action assignment "Increment OverlapSaccade_NoHandFixDuringFix": variable=OverlapSaccade_NoHandFixDuringFix, value=OverlapSaccade_NoHandFixDuringFix+1
        action start_timer "Start Feedback 7": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 7": target=Bad, timer=Feedback
      task_system_state "NoEyeFixDuringOverlap"
        action assignment "Assign stateAnalogOut 13": variable=stateAnalogOut, value=23/50*5
        action assignment "Set fix_red to 11": variable=fix_green, value=0
        action assignment "Set fix_red to 10": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display 11"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringOverlap": variable=OverlapSaccade_NoEyeFixDuringOverlap, value=OverlapSaccade_NoEyeFixDuringOverlap+1
        action start_timer "Start Feedback 6": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 6": target=Bad, timer=Feedback
      task_system_state "NoHandFixDuringOverlap"
        action assignment "Assign stateAnalogOut 14": variable=stateAnalogOut, value=17/50*5
        action assignment "Set handFixR to 8": variable=handFixB, value=0
        action assignment "Set handFixB to 10": variable=handFixG, value=0
        action update_stimulus_display "Update Stimulus Display 14"
        action assignment "Increment OverlapSaccade_NoHandFixDuringOverlap": variable=OverlapSaccade_NoHandFixDuringOverlap, value=OverlapSaccade_NoHandFixDuringOverlap+1
        action start_timer "Start Feedback 5": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 5": target=Bad, timer=Feedback
      task_system_state "Hand2OtherTarget"
        action assignment "Assign stateAnalogOut 15": variable=stateAnalogOut, value=32/50*5
        action assignment "Set targ_green to 4": variable=targ_green, value=0
        action assignment "Set targ_blue to 5": variable=targ_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_Hand2OtherTarget": variable=OverlapSaccade_Hand2OtherTarget, value=OverlapSaccade_Hand2OtherTarget+1
        action start_timer "Start Feedback 4": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 4": target=Bad, timer=Feedback
      task_system_state "NoEyeFixDuringRT"
        action assignment "Assign stateAnalogOut 16": variable=stateAnalogOut, value=27/50*5
        action assignment "Set fix_red to 13": variable=fix_green, value=0
        action assignment "Set fix_red to 12": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display 12"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringRT": variable=OverlapSaccade_NoEyeFixDuringRT, value=OverlapSaccade_NoEyeFixDuringRT+1
        action start_timer "Start Feedback 3": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 3": target=Bad, timer=Feedback
      task_system_state "NoHandFixDuringRT"
        action assignment "Assign stateAnalogOut 17": variable=stateAnalogOut, value=28/50*5
        action assignment "Set fix_red to 13": variable=handFixG, value=0
        action assignment "Set fix_red to 12": variable=handFixB, value=0
        action update_stimulus_display "Update Stimulus Display 12"
        action assignment "Increment OverlapSaccade_NoHandFixDuringRT": variable=OverlapSaccade_NoHandFixDuringRT, value=OverlapSaccade_NoHandFixDuringRT +1
        action start_timer "Start Feedback 2": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad 2": target=Bad, timer=Feedback
      task_system_state "LateRT"
        action assignment "Assign stateAnalogOut 18": variable=stateAnalogOut, value=33/50*5
        action assignment "Set targ_green to 5": variable=targ_green, value=0
        action assignment "Set targ_blue to 6": variable=targ_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_LateRT": variable=OverlapSaccade_LateRT, value=OverlapSaccade_LateRT+1
        action start_timer "Start Feedback": timer=Feedback, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If Feedback Expired, Transition to Bad": target=Bad, timer=Feedback
      task_system_state "No Fix"
        action assignment "Increment OverlapSaccade_NoFix": variable=OverlapSaccade_NoFix, value=OverlapSaccade_NoFix+1
        transition direct "Always Go to Bad 8": target=Bad
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_rand1switch": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=0
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_1": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333321"
        task_system_state "Initial"
          action assignment "Assign randTmp": variable=randTmp, value=disc_rand(0,1)
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
            action assignment "Set idShortLong": variable=idShortLong, value=1-idShortLong
            action assignment "Assign fixY 9": variable=fixY, value=-fixY
            action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
            action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
            action assignment "Select interval_min": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
            action assignment "Select interval_max": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          action if "If randTmp==1 && localTrials>0, change idHandEye": condition=randTmp==1 && localTrials>0
            action assignment "Assign idHandEye 3": variable=idHandEye, value=1-idHandEye
          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign targ_green": variable=targ_green, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_green, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
              action if "If consecutiveIncorrect==4, sample theta & interval": condition=consecutiveIncorrect ==4
                action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
                action assignment "Select interval": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
                action assignment "assign consecutiveIncorrect 2": variable=consecutiveIncorrect, value=0
              action if "Else, Select repeat": condition=consecutiveIncorrect !=4
                action assignment "Select theta": variable=theta, value=theta
                action assignment "Select interval": variable=interval, value=interval
          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
            action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
            action assignment "Select interval": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 8": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 111"
          action report "Report fixating": message=Fixating.
          transition conditional "If !fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)> leverFixWinInit/2, target=Abort
          transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 7": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 9": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
          transition conditional "If fixOn == 0 | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 8": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 10": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If wrong modality, Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Ready 2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 9": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Set2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set2
          transition conditional "If wrong modality, Transition to Abort 2": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*!handFixOn, Transition to Production": condition=(idHandEye==1)*(!fixOn)+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Production
          transition conditional "If (idHandEye==0)*(!fixOn)+(idHandEye==1)*(!handFixOn), Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to No Saccade": target=No Saccade, timer=saccade_wait
        task_system_state "Production"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=(idHandEye==0)*handTimeDur+(idHandEye==1)*saccadeTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=(idHandEye==1)*on_targ+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(target_x+handFixX2))<leverTarWinInit/2), target=TargetAcquired
          transition conditional "If !fixOn, Transition to Abort 2": condition=(idHandEye==0)*!fixOn+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "(not used but keep) If go to the other target, Transition to Abort": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x+handFixX2))<leverTarWinInit/2, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Increment N_complete": variable=N_complete, value=N_complete +1
          action assignment "Increment localCompleteTrials": variable=localCompleteTrials, value=localCompleteTrials +1
          transition conditional "If correct, Transition to Reward 2": condition=abs(productionInterval - interval)/interval <= win_fraction, target=reward delay
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 10": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 12": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 2": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 3": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 4": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 5": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 6": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 7": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 8": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash 2": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 11": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 13": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to End Trial": target=End Trial, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue 2": stimulus=ready_cue
          action dequeue_stimulus "Dequeue set2 cue 4": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 17"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action assignment "Compute Production Time": variable=productionInterval, value=(ready_cue_onset_time_us-now())/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "After Set2"
          action assignment "Compute Production Time": variable=productionInterval, value=(ready_cue_onset_time_us-now())/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "No Saccade"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 13": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
              action assignment "Assign ballAlpha": variable=ballAlpha, value=min(ballAlpha+dballAlphaIncorrect, maxBallAlpha)
              action assignment "Assign radius": variable=radius, value=radius + radiusStep
              action assignment "Assign win_fraction 3": variable=win_fraction, value=win_fraction+dwin
              action assignment "Assign ballAlphaProd 3": variable=ballAlphaProd, value=min(ballAlphaProd+dballAlphaIncorrect, maxBallAlphaProd)
              action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
            action if "Else": condition=!afterSet2
              action assignment "Assign ballAlpha 2": variable=ballAlpha, value=ballAlpha
              action assignment "Assign radius 6": variable=radius, value=radius 
              action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
              action assignment "Assign flashRate": variable=flashRate, value=flashRate
          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Assign totalRewDur 3": variable=totalRewDur, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 115": stimulus=cursor
          action dequeue_stimulus "Dequeue Fix 14": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 2": stimulus=Fix2
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Exit State System"
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_seqSwitch": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=0
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_seq": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333324"
        task_system_state "Initial"
          action assignment "Assign randTmp": variable=randTmp, value=1-randTmp
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
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          action if "If randTmp==1 && localTrials>0, change idHandEye": condition=randTmp==1 && localTrials>0
            action assignment "Assign idHandEye 3": variable=idHandEye, value=1-idHandEye
          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
              action if "If consecutiveIncorrect==4, sample theta & interval": condition=consecutiveIncorrect ==4
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              action if "Else, Select repeat": condition=consecutiveIncorrect !=4
                action assignment "Select theta": variable=theta, value=theta
                action assignment "Select interval": variable=interval, value=interval
          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
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          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 19": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 112"
          action report "Report fixating": message=Fixating.
          transition conditional "If !fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)> leverFixWinInit/2, target=Abort
          transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 16": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 18": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
          transition conditional "If fixOn == 0 | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 15": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 17": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If wrong modality, Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Ready 2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 14": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 16": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Set2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set2
          transition conditional "If wrong modality, Transition to Abort 2": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 13": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 15": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 2": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 3": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 4": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 5": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 6": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 7": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 8": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash 3": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 12": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 14": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to End Trial": target=End Trial, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue 3": stimulus=ready_cue
          action dequeue_stimulus "Dequeue set2 cue 5": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 18"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
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        task_system_state "After Set2"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 13": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
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            action if "Else": condition=!afterSet2
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          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Assign totalRewDur 3": variable=totalRewDur, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
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        task_system_state "Exit State System"
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_randomSwitch": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign stateAnalogOut 19": variable=stateAnalogOut, value=0
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=1
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_rand": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333329"
        task_system_state "Initial"
          action assignment "Assign stateAnalogOut 110": variable=stateAnalogOut, value=0
          action assignment "Assign randTmp": variable=randTmp, value=disc_rand(0,2)
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
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          action if "If randTmp==1 && localTrials>0, change idHandEye": condition=randTmp==1 && localTrials>0
            action assignment "Assign idHandEye 3": variable=idHandEye, value=1-idHandEye
          action if "If randTmp==2 && localTrials>0, change idShortLong & idHandEye": condition=randTmp==2 && localTrials>0
            action assignment "Set idShortLong": variable=idShortLong, value=1-idShortLong
            action assignment "Assign fixY 9": variable=fixY, value=-fixY
            action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
            action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
            action assignment "Select interval_min": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
            action assignment "Select interval_max": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
            action assignment "Assign idHandEye 8": variable=idHandEye, value=1-idHandEye
          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=((idShortLong!=1)||(idHandEye!=1))
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=((idShortLong!=0)||(idHandEye!=1))
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign targ_green": variable=targ_green, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_green, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 111": variable=stateAnalogOut, value=5/50*5
          action pulse "Pulse trialSync 2": variable=trialSync, duration=10*1000
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Trial Start"
          action assignment "Assign stateAnalogOut 113": variable=stateAnalogOut, value=10/50*5
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
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          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
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          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 2": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 110"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 2": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 3": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 114": variable=stateAnalogOut, value=15/50*5
          action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
          transition conditional "If fixOn == 0 | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 3": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 4": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 115": variable=stateAnalogOut, value=20/50*5
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If wrong modality, Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Ready 2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 4": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 5": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 116": variable=stateAnalogOut, value=25/50*5
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Set2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set2
          transition conditional "If wrong modality, Transition to Abort 2": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=(idHandEye==0)*handTimeDur+(idHandEye==1)*saccadeTimeDur, duration_units=ms
          action assignment "Assign stateAnalogOut 117": variable=stateAnalogOut, value=30/50*5
          transition conditional "If on_targ, Transition to TargetAcquired": condition=(idHandEye==1)*on_targ+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(target_x+handFixX2))<leverTarWinInit/2), target=TargetAcquired
          transition conditional "If !fixOn, Transition to Abort 2": condition=(idHandEye==0)*!fixOn+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "(not used but keep) If go to the other target, Transition to Abort": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x+handFixX2))<leverTarWinInit/2, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign stateAnalogOut 118": variable=stateAnalogOut, value=35/50*5
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Increment N_complete": variable=N_complete, value=N_complete +1
          action assignment "Increment localCompleteTrials": variable=localCompleteTrials, value=localCompleteTrials +1
          transition conditional "If correct, Transition to Reward 2": condition=abs(productionInterval - interval)/interval <= win_fraction, target=reward delay
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          action assignment "Assign stateAnalogOut 119": variable=stateAnalogOut, value=40/50*5
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 5": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 6": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1110": variable=stateAnalogOut, value=45/50*5
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 2": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 3": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 4": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 5": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 6": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 7": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 8": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1111": variable=stateAnalogOut, value=50/50*5
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          action assignment "Assign stateAnalogOut 1112": variable=stateAnalogOut, value=0
          transition timer_expired "If ITI Expired, Transition to ITI2": target=ITI2, timer=ITI
        task_system_state "ITI2"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System 2": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to Fix On": target=Fix On
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 6": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 7": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1113": variable=stateAnalogOut, value=40/50*5
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to End Trial": target=End Trial, timer=FeedbackTime
        task_system_state "Abort"
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          action dequeue_stimulus "Dequeue ready cue 4": stimulus=ready_cue
          action dequeue_stimulus "Dequeue set2 cue 6": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 19"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
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        task_system_state "After Set2"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 13": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 1114": variable=stateAnalogOut, value=0
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
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            action if "Else": condition=!afterSet2
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          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Assign totalRewDur 3": variable=totalRewDur, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
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        task_system_state "Exit State System"
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_seqSwitch photosync": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign stateAnalogOut 19": variable=stateAnalogOut, value=0
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=0
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_rand": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333329"
        task_system_state "Initial"
          action assignment "Assign stateAnalogOut 110": variable=stateAnalogOut, value=0
          action assignment "Assign randTmp": variable=randTmp, value=1-randTmp
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
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          action if "If randTmp==1 && localTrials>0, change idHandEye": condition=randTmp==1 && localTrials>0
            action assignment "Assign idHandEye 3": variable=idHandEye, value=1-idHandEye
          action if "If randTmp==2 && localTrials>0, change idShortLong & idHandEye": condition=randTmp==2 && localTrials>0
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          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          action assignment "Assign stateAnalogOut 1112": variable=stateAnalogOut, value=0
          transition timer_expired "If ITI Expired, Transition to ITI2": target=ITI2, timer=ITI
        task_system_state "ITI2"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System 2": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to Fix On": target=Fix On
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set2"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_seqSwitch photosync noSet": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign stateAnalogOut 19": variable=stateAnalogOut, value=0
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=0
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_rand": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333329"
        task_system_state "Initial"
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        task_system_state "Fix On"
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        task_system_state "Trial Start"
          action assignment "Assign stateAnalogOut 113": variable=stateAnalogOut, value=10/50*5
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Assign idNoSet": variable=idNoSet, value=rand(0,1)<pNoSet
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
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          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
            action if "If !idNoSet, queue set 2": condition=!idNoSet
              action assignment "Select theta 2": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
              action assignment "Select interval 2": variable=interval, value=interval_min + disc_rand(0,interval_N-1)*(interval_max-interval_min)/(interval_N-1)
              action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
            action if "If idNoSet, set2_ended=2": condition=idNoSet
              action assignment "Select theta 3": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
              action assignment "Select interval 3": variable=interval, value=interval_max
              action assignment "Assign saccade_wait_dur 2": variable=saccade_wait_dur, value=waitDur
              action assignment "Assign nNoSet": variable=nNoSet, value=nNoSet+1
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action if "If idNoSet, set2_ended=1": condition=idNoSet
            action assignment "Reset set2_ended 2": variable=set2_ended, value=1
          action if "If !idNoSet, queue set": condition=!idNoSet
            action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 4": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 5": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign stateAnalogOut 116": variable=stateAnalogOut, value=25/50*5
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*(!handFixOn), Transition to After Set2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set2
          transition conditional "If wrong modality, Transition to Abort 2": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign stateAnalogOut 118": variable=stateAnalogOut, value=35/50*5
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Increment N_complete": variable=N_complete, value=N_complete +1
          action assignment "Increment localCompleteTrials": variable=localCompleteTrials, value=localCompleteTrials +1
          transition conditional "If idNoSet, Transition to Bad": condition=idNoSet, target=Bad
          transition conditional "If correct, Transition to Reward 3": condition=abs(productionInterval - interval)/interval <= win_fraction, target=reward delay
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "reward delay"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          action assignment "Assign stateAnalogOut 1112": variable=stateAnalogOut, value=0
          transition timer_expired "If ITI Expired, Transition to ITI2": target=ITI2, timer=ITI
        task_system_state "ITI2"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System 2": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to Fix On": target=Fix On
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set2"
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        task_system_state "No Saccade"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action if "If idNoSet, increment nCorrectNoSet": condition=idNoSet
            action assignment "increment nCorrectNoSet": variable=nCorrectNoSet, value=nCorrectNoSet+1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_seqSwitch photosync noSet 2": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign ao1": variable=ao0, value=10
    action assignment "Assign stateAnalogOut 19": variable=stateAnalogOut, value=0
    action assignment "Assign idShortLong: initially longHand": variable=idShortLong, value=1
    action assignment "Assign idHandEye 7": variable=idHandEye, value=0
    action assignment "Assign fixY": variable=fixY, value=-dFixY
    action assignment "Assign handFixY 13": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
    action assignment "Assign iti 3": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
    action assignment "Select interval_min 3": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
    action assignment "Select interval_max 3": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
    action assignment "Assign localTrials 2": variable=localTrials, value=0
    block "block_RSG_twoPrior_handEye_rand": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials 333329"
        task_system_state "Initial"
          action start_device_IO "Start NIDaq Device 3": device=NIDaq Device
          action assignment "Assign stateAnalogOut 110": variable=stateAnalogOut, value=0
          action assignment "Assign randTmp": variable=randTmp, value=1-randTmp
          action if "If randTmp==0 && localTrials>0, change idShortLong": condition=randTmp==0 && localTrials>0
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          action if "If randTmp==1 && localTrials>0, change idHandEye": condition=randTmp==1 && localTrials>0
            action assignment "Assign idHandEye 3": variable=idHandEye, value=1-idHandEye
          action if "If randTmp==2 && localTrials>0, change idShortLong & idHandEye": condition=randTmp==2 && localTrials>0
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          action report "Announce shortLong/handEye": message=idShortLong: $idShortLong, idHandEye: $idHandEye
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials": variable=localCompleteTrials, value=0
          action assignment "Assign trialNum": variable=trialNum, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 9": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 8": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 7": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Trial Start"
          action assignment "Assign stateAnalogOut 113": variable=stateAnalogOut, value=10/50*5
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=fixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Assign idNoSet": variable=idNoSet, value=rand(0,1)<pNoSet
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
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          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=0==0
            action if "If !idNoSet, queue set 2": condition=!idNoSet
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            action if "If idNoSet, set2_ended=2": condition=idNoSet
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          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          action assignment "Assign stateAnalogOut 1112": variable=stateAnalogOut, value=0
          transition timer_expired "If ITI Expired, Transition to ITI2": target=ITI2, timer=ITI
        task_system_state "ITI2"
          transition conditional "If localCompleteTrials == trialNum, Transition to Exit State System 2": condition=localCompleteTrials >= trialNum || pstop, target=Exit State System
          transition direct "Always Go to Fix On": target=Fix On
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set2"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action stop_device_IO "Stop IO Device": device=NIDaq Device
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_Seq_blockCoded": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign amp 2": variable=amp, value=10
    action assignment "Assign ao1": variable=ao0, value=10
    block "seqBlock": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "Trials longHand"
        task_system_state "Initial"
          action report "Announce Begin State System": message=Long/Hand
          action assignment "Assign idHandEye 3": variable=idHandEye, value=0
          action assignment "Assign idShortLong": variable=idShortLong, value=1
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials 2": variable=localCompleteTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red 7": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green 6": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue 7": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 12": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 11": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 12": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min 4": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
          action assignment "Select interval_max 4": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action assignment "Assign cursorAlpha 9": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
          action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
          transition conditional "If !fixOn | !handFixOn, Transition to No Fix 2": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=No Fix
          transition timer_expired "If GraceTime Expired, Transition to Trial Start": target=Trial Start, timer=GraceTime
        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "(disabled) If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=0==1
            action if_else "If/Else 4"
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          action if "(always true) If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=1==1
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          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 110": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 113"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 18": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111": stimulus=syncFlash
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 19": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 112": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Ready": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending && Nsets == 1, go to Set": condition=Interval1_ending && Nsets == 1, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 110": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 113": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Set1": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set1
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If (idHandEye==1)*(!fixOn)+(idHandEye==0)*!handFixOn, Transition to Production": condition=(idHandEye==1)*(!fixOn)+(idHandEye==0)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Production
          transition conditional "If (idHandEye==0)*(!fixOn)+(idHandEye==1)*(!handFixOn), Transition to Abort": condition=(idHandEye==0)*(!fixOn)+(idHandEye==1)*(abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2), target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
        task_system_state "Production"
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        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign cursor2x1": variable=cursor2x0, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Increment N_complete 2": variable=N_complete, value=N_complete +1
          action assignment "Increment localCompleteTrials 2": variable=localCompleteTrials, value=localCompleteTrials +1
          transition conditional "If correct, Transition to Reward delay": condition=abs(productionInterval - interval)/interval <= win_fraction, target=reward delay
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 111": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 114": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft 2": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 3": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 4": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 5": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 6": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 7": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 8": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 9": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash 4": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localCompleteTrials == trialNumBlock, Transition to Exit State System": condition=localCompleteTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 112": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 115": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action if "If hand fixation breaks, tp measurement": condition=fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action if "If eye fixation breaks, no tp measurement": condition=!fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action dequeue_stimulus "Dequeue Fix 19": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 18": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 17": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 11": stimulus=cursor
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur*2, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "After Set1"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet1": variable=afterSet1, value=1
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue set2 cue 3": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Stimulus 12": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "No Saccade"
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        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 13": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action live_queue_stimulus "Live Queue Stimulus 13": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
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            action if "Else": condition=!afterSet2
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          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Assign totalRewDur 3": variable=totalRewDur, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 2": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 14": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials shortHand"
        task_system_state "Initial"
          action report "Announce Begin State System": message=short/Hand
          action assignment "Assign idHandEye 3": variable=idHandEye, value=0
          action assignment "Assign idShortLong": variable=idShortLong, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials 2": variable=localCompleteTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red 7": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green 6": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue 7": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 12": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 11": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 12": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min 4": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
          action assignment "Select interval_max 4": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 116": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 114"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 114": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 117": stimulus=syncFlash
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 115": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 118": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Ready": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending && Nsets == 1, go to Set": condition=Interval1_ending && Nsets == 1, target=Set
        task_system_state "Set"
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action stop_dynamic_stimulus "reset syncFlash 116": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 119": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Set1": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set1
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 117": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1110": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Increment N_correctShortHandLeft 2": variable=N_correctShortHandLeft, value=N_correctShortHandLeft +(idShortLong==0)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctShortHandRight 3": variable=N_correctShortHandRight, value=N_correctShortHandRight +(idShortLong==0)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctShortEyeLeft 4": variable=N_correctShortEyeLeft, value=N_correctShortEyeLeft +(idShortLong==0)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctShortEyeRight 5": variable=N_correctShortEyeRight, value=N_correctShortEyeRight +(idShortLong==0)*(idHandEye==1)*(theta<90)
          action assignment "Increment N_correctLongHandLeft 6": variable=N_correctLongHandLeft, value=N_correctLongHandLeft +(idShortLong==1)*(idHandEye==0)*(theta>90)
          action assignment "Increment N_correctLongHandRight 7": variable=N_correctLongHandRight, value=N_correctLongHandRight +(idShortLong==1)*(idHandEye==0)*(theta<90)
          action assignment "Increment N_correctLongEyeLeft 8": variable=N_correctLongEyeLeft, value=N_correctLongEyeLeft +(idShortLong==1)*(idHandEye==1)*(theta>90)
          action assignment "Increment N_correctLongEyeRight 9": variable=N_correctLongEyeRight, value=N_correctLongEyeRight +(idShortLong==1)*(idHandEye==1)*(theta<90)
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action dequeue_stimulus "Dequeue syncFlash 5": stimulus=syncFlash
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localCompleteTrials == trialNumBlock, Transition to Exit State System": condition=localCompleteTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action stop_dynamic_stimulus "reset syncFlash 118": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111": stimulus=syncFlash
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials shortEye"
        task_system_state "Initial"
          action report "Announce Begin State System": message=short/eye
          action assignment "Assign idHandEye 3": variable=idHandEye, value=1
          action assignment "Assign idShortLong": variable=idShortLong, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials 2": variable=localCompleteTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red 7": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green 6": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue 7": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 12": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 11": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 12": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min 4": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
          action assignment "Select interval_max 4": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 1112": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 115"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 1110": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1113": stimulus=syncFlash
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        task_system_state "Ready"
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          action stop_dynamic_stimulus "reset syncFlash 1111": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1114": stimulus=syncFlash
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        task_system_state "Set"
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          action stop_dynamic_stimulus "reset syncFlash 1112": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1115": stimulus=syncFlash
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
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          action stop_dynamic_stimulus "reset syncFlash 1113": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1116": stimulus=syncFlash
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        task_system_state "End Trial"
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          action dequeue_stimulus "Dequeue syncFlash 6": stimulus=syncFlash
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action stop_dynamic_stimulus "reset syncFlash 1114": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1117": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials longEye"
        task_system_state "Initial"
          action report "Announce Begin State System": message=Long/Eye
          action assignment "Assign idHandEye 3": variable=idHandEye, value=1
          action assignment "Assign idShortLong": variable=idShortLong, value=1
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign localCompleteTrials 2": variable=localCompleteTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=(idShortLong==0)*itiShort+(idShortLong==1)*itiLong
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red 7": variable=fix_red, value=(idShortLong!=1)||(idHandEye!=1)
          action assignment "Assign fix_green 6": variable=fix_green, value=idHandEye==0
          action assignment "Assign fix_blue 7": variable=fix_blue, value=(idShortLong!=0)||(idHandEye!=1)
          action assignment "Set handFixR to 12": variable=handFixR, value=(idShortLong!=1)||(idHandEye!=0)
          action assignment "Set handFixG to 11": variable=handFixG, value=idHandEye==1
          action assignment "Set handFixB to 12": variable=handFixB, value=(idShortLong!=0)||(idHandEye!=0)
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min 4": variable=interval_min, value=(idShortLong==0)*interval_minShort+(idShortLong==1)*interval_minLong
          action assignment "Select interval_max 4": variable=interval_max, value=(idShortLong==0)*interval_maxShort+(idShortLong==1)*interval_maxLong
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 1118": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 116"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 1116": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1119": stimulus=syncFlash
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        task_system_state "Ready"
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          action stop_dynamic_stimulus "reset syncFlash 1117": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11110": stimulus=syncFlash
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        task_system_state "Set"
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          action stop_dynamic_stimulus "reset syncFlash 1118": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11111": stimulus=syncFlash
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
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          action stop_dynamic_stimulus "reset syncFlash 1119": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11112": stimulus=syncFlash
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        task_system_state "End Trial"
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          action dequeue_stimulus "Dequeue syncFlash 7": stimulus=syncFlash
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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          action stop_dynamic_stimulus "reset syncFlash 11110": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11113": stimulus=syncFlash
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "RSG_twoPrior_handEye_fullRandom_blockCoded": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    action assignment "Assign amp 2": variable=amp, value=10
    action assignment "Assign ao1": variable=ao0, value=10
    block "fullRandomBlock": nsamples=10000, sampling_method=cycles, selection=random_without_replacement
      task_system "Trials longHand2"
        task_system_state "Initial"
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        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 11114": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 117"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 11112": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11115": stimulus=syncFlash
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        task_system_state "Ready"
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          action stop_dynamic_stimulus "reset syncFlash 11113": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11116": stimulus=syncFlash
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        task_system_state "Set"
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          action stop_dynamic_stimulus "reset syncFlash 11114": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11117": stimulus=syncFlash
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
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          action stop_dynamic_stimulus "reset syncFlash 11115": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11118": stimulus=syncFlash
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        task_system_state "End Trial"
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          action dequeue_stimulus "Dequeue syncFlash 8": stimulus=syncFlash
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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          action stop_dynamic_stimulus "reset syncFlash 11116": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 11119": stimulus=syncFlash
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials shortHand2"
        task_system_state "Initial"
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        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 111110": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 118"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
          action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
          transition conditional "If fixOn == 0 | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
        task_system_state "Ready"
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          action stop_dynamic_stimulus "reset syncFlash 11118": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111111": stimulus=syncFlash
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        task_system_state "Set"
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          action stop_dynamic_stimulus "reset syncFlash 11119": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111112": stimulus=syncFlash
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
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          action stop_dynamic_stimulus "reset syncFlash 111110": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111113": stimulus=syncFlash
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        task_system_state "End Trial"
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          action dequeue_stimulus "Dequeue syncFlash 9": stimulus=syncFlash
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action stop_dynamic_stimulus "reset syncFlash 111111": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111114": stimulus=syncFlash
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials shortEye2"
        task_system_state "Initial"
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        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action queue_stimulus "Queue syncFlash 111115": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 119"
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        task_system_state "Target On"
          action live_queue_stimulus "Live Queue target": stimulus=target
          action stop_dynamic_stimulus "reset syncFlash 111113": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111116": stimulus=syncFlash
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        task_system_state "Ready"
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          action stop_dynamic_stimulus "reset syncFlash 111114": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111117": stimulus=syncFlash
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        task_system_state "Set"
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          action stop_dynamic_stimulus "reset syncFlash 111115": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111118": stimulus=syncFlash
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "reward delay"
          action start_timer "Start cursorMove": timer=cursorMove, duration=dtProdRew, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to Reward": target=Reward, timer=cursorMove
        task_system_state "Reward"
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          action stop_dynamic_stimulus "reset syncFlash 111116": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 111119": stimulus=syncFlash
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        task_system_state "End Trial"
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          action dequeue_stimulus "Dequeue syncFlash 10": stimulus=syncFlash
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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          action stop_dynamic_stimulus "reset syncFlash 111117": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111110": stimulus=syncFlash
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "Trials longEye2"
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          action queue_stimulus "Queue syncFlash 1111111": stimulus=syncFlash
          action update_stimulus_display "Update Stimulus Display 1110"
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          action stop_dynamic_stimulus "reset syncFlash 111118": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111112": stimulus=syncFlash
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          action stop_dynamic_stimulus "reset syncFlash 111119": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111113": stimulus=syncFlash
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          action stop_dynamic_stimulus "reset syncFlash 1111110": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111114": stimulus=syncFlash
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          action stop_dynamic_stimulus "reset syncFlash 1111111": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111115": stimulus=syncFlash
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          action dequeue_stimulus "Dequeue syncFlash 11": stimulus=syncFlash
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          action stop_dynamic_stimulus "reset syncFlash 1111112": stimulus=syncFlash
          action queue_stimulus "Queue syncFlash 1111116": stimulus=syncFlash
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  protocol "Fixation+Distractor": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Exit": target=Trial Start
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action if_else "If/Else"
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action if "Else, Select theta randomly": condition=1
            action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Assign distractor_x": variable=distractor_x, value=amp*cos(theta*pi()/180)
        action assignment "Assign distractor_y": variable=distractor_y, value=amp*sin(theta*pi()/180)
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action if "Conditionally Execute Actions": condition=DistractorSimultaneous
          action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
        action report "Report fixation acquired": message=Fixation acquired.
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign pursuitTheta": variable=pursuitTheta, value=pursuitTheta
        action assignment "Assign distractorOnset_time": variable=distractorOnset_time, value=-distractorOnset_mu*logn(rand(0,1)) + distractorOnset_min
        action start_timer "Start DistractorWait": timer=DistractorWait, duration=distractorOnset_time, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If HoldFix Expired, Transition to DistractorOn": target=DistractorOn, timer=DistractorWait
      task_system_state "DistractorOn"
        action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign distractorOn": variable=distractorOn, value=1
        action assignment "Assign distractorTime": variable=distractorTime, value=-distractorTime_mu*logn(rand(0,1)) + distractorTime_min
        action start_timer "Start DistractorTime": timer=DistractorTime, duration=distractorTime, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If DistractorTime Expired, Transition to DistractorOff": target=DistractorOff, timer=DistractorTime
      task_system_state "DistractorOff"
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign timeRemaining": variable=timeRemaining, value=max(0,trialDuration-distractorOnset_time - distractorTime)
        action start_timer "Start RemainingTime": timer=RemainingTime, duration=timeRemaining, duration_units=ms
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If RemainingTime Expired, Transition to Reward": target=Reward, timer=RemainingTime
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment fix_dis_correct": variable=fix_dis_correct, value=fix_dis_correct+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action report "Report Ending Trial": message=Ending Trial.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment fix_dis_trials": variable=fix_dis_trials, value=fix_dis_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials >= trialNum, Transition to Exit Fixation Distractor System": condition=localTrials >= trialNum, target=Exit Fixation Distractor System
        transition conditional "If pstop, Transition to Exit Fixation Distractor System": condition=pstop, target=Exit Fixation Distractor System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_dis_ITI": timer=fix_dis_ITI, duration=fix_dis_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Fix On, timer=fix_dis_ITI
      task_system_state "Bad"
        action report "Report failure": message=Trial Failed.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action start_timer "Start fix_pur_timeout": timer=fix_pur_timeout, duration=fix_pur_timeoutDur, duration_units=ms
        transition timer_expired "If fix_pur_timeout Expired, Transition to End Trial": target=End Trial, timer=fix_pur_timeout
      task_system_state "Failure to fixate"
        action report "Report Failure to fixate": message=Failure to fixate.
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit Fixation Distractor System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "FixationDistractor+OverlapSaccade": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action assignment "Assign pstop 2": variable=pstop, value=0
    action assignment "Assign fix_red 2": variable=fix_red, value=1
    action assignment "Assign fix_green 2": variable=fix_green, value=1
    action assignment "Assign fix_blue 2": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "New Task System"
      task_system_state "Begin State System"
        action assignment "Assign idDistOverlap": variable=idDistOverlap, value=disc_rand(0,1)
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition conditional "If idDistOverlap==0 (dist), Transition to ...": condition=idDistOverlap==0, target=Fix On
        transition conditional "If idDistOverlap==1 (overlap), Transition to ... 2": condition=idDistOverlap==1, target=Initial2
      task_system_state "Exit Fixation Distractor System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
      task_system_state "Initial2"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign fix_dur_mean": variable=fix_dur_mean, value=distractorOnset_mu
        action assignment "Assign target_dur_mean": variable=target_dur_mean, value=distractorTime_mu
        action assignment "Assign target_dur_min": variable=target_dur_min, value=distractorTime_min
        action assignment "Assign fix_dur_min": variable=fix_dur_min, value=distractorOnset_min
        transition direct "Go to Fix On2": target=Fix On2
      task_system_state "Fix On2"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign fix_red 4": variable=fix_red, value=1
        action assignment "Assign fix_blue 4": variable=fix_blue, value=1
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start2": condition=fixOn, target=Trial Start2
        transition timer_expired "If fix_wait Expired, Transition to No Fix2": target=No Fix2, timer=fixWait
      task_system_state "Grace2"
        action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
        transition conditional "If !fixOn, Transition to No Fix2": condition=!fixOn, target=No Fix2
        transition timer_expired "If GraceTime Expired, Transition to Trial Start2": target=Trial Start2, timer=GraceTime
      task_system_state "Trial Start2"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Bad2": condition=!fixOn, target=Bad2
        transition direct "Always Go to Fix Time2": target=Fix Time2
      task_system_state "Fix Time2"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Bad2": condition=!fixOn, target=Bad2
        transition timer_expired "If fix_time Expired, Transition to Target On2": target=Target On2, timer=fix_time
      task_system_state "Target On2"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad2": condition=!fixOn, target=Bad2
        transition timer_expired "If targetTime Expired, Transition to Fix Off2": target=Fix Off2, timer=targetTime
      task_system_state "Fix Off2"
        action dequeue_stimulus "Dequeue fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to Reward2": condition=on_targ, target=Reward2
        transition timer_expired "If saccadeTime Expired, Transition to Bad2": target=Bad2, timer=saccadeTime
      task_system_state "Reward2"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment OverlapSaccade_correct": variable=OverlapSaccade_correct, value=OverlapSaccade_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial2": target=End Trial2, timer=GreenTime
      task_system_state "End Trial2"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action assignment "Increment OverlapSaccade_trials": variable=OverlapSaccade_trials, value=OverlapSaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System2": condition=localTrials >= trialNum || pstop, target=Exit State System2
        transition direct "Always Go to ITI2": target=ITI2
      task_system_state "ITI2"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On2": target=Begin State System, timer=ITI
      task_system_state "Bad2"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial2": target=End Trial2, timer=Timeout
      task_system_state "No Fix2"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action report "Report no fixation": message=Failed to fixate.
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On2": target=Fix On2, timer=NoFixWait
      task_system_state "Exit State System2"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action if_else "If/Else"
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        action assignment "Assign distractor_x": variable=distractor_x, value=amp*cos(theta*pi()/180)
        action assignment "Assign distractor_y": variable=distractor_y, value=amp*sin(theta*pi()/180)
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action if "Conditionally Execute Actions": condition=DistractorSimultaneous
          action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Trial Start"
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      task_system_state "DistractorOn"
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      task_system_state "DistractorOff"
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      task_system_state "Reward"
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      task_system_state "End Trial"
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      task_system_state "ITI"
        action report "Report ITI": message=ITI.
        action start_timer "Start fix_dis_ITI": timer=fix_dis_ITI, duration=fix_dis_ITI_Dur, duration_units=ms
        transition timer_expired "If fix_pur_ITI Expired, Transition to Fix On": target=Begin State System, timer=fix_dis_ITI
      task_system_state "Bad"
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      task_system_state "Failure to fixate"
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  protocol "Fixation": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to FIx On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign fix_red": variable=fix_red, value=1
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        action if_else "If/Else"
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        action assignment "Assign distractor_x": variable=distractor_x, value=amp*cos(theta*pi()/180)
        action assignment "Assign distractor_y": variable=distractor_y, value=amp*sin(theta*pi()/180)
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action if "Conditionally Execute Actions": condition=DistractorSimultaneous
          action live_queue_stimulus "Live Queue Distractor": stimulus=Distractor
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        transition conditional "If fixOn, Transition to Fix Time": condition=fixOn, target=Fix Time
        transition timer_expired "If fixWait Expired, Transition to Failure to fixate": target=Failure to fixate, timer=fixWait
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Failure to fixate": condition=!fixOn, target=Failure to fixate
        transition timer_expired "If fix_time Expired, Transition to Reward": target=Reward, timer=fix_time
      task_system_state "Reward"
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      task_system_state "End Trial"
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      task_system_state "ITI"
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      task_system_state "Bad"
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      task_system_state "Failure to fixate"
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      task_system_state "Exit Fixation Distractor System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "OverlapSaccade": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action assignment "Assign pstop": variable=pstop, value=0
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 3": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 4"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
        action start_timer "Start GraceTime": timer=GraceTime, duration=GraceTimeDur, duration_units=ms
        transition conditional "If !fixOn, Transition to No Fix": condition=!fixOn, target=No Fix
        transition timer_expired "If GraceTime Expired, Transition to Trial Start": target=Trial Start, timer=GraceTime
      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Select theta": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Bad": condition=!fixOn, target=Bad
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If targetTime Expired, Transition to Fix Off": target=Fix Off, timer=targetTime
      task_system_state "Fix Off"
        action dequeue_stimulus "Dequeue fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to Reward": condition=on_targ, target=Reward
        transition timer_expired "If saccadeTime Expired, Transition to Bad": target=Bad, timer=saccadeTime
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment OverlapSaccade_correct": variable=OverlapSaccade_correct, value=OverlapSaccade_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action assignment "Increment OverlapSaccade_trials": variable=OverlapSaccade_trials, value=OverlapSaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action report "Report no fixation": message=Failed to fixate.
        action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
        transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "OverlapHand": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=-1
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 3": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 4"
    task_system "Trials"
      task_system_state "Initial"
        action assignment "Assign localTrials": variable=localTrials, value=0
        action assignment "Assign fix_win": variable=fix_win, value=8
        action assignment "Assign ao0": variable=ao0, value=10
        action assignment "Assign theta_min": variable=theta_min, value=0
        action assignment "Assign theta_max": variable=theta_max, value=180
        action assignment "Assign theta_N": variable=theta_N, value=2
        action assignment "Assign trialNum 2": variable=trialNum, value=5000
        action assignment "Assign fix_dur_mean": variable=fix_dur_mean, value=250
        action assignment "Assign fix_dur_min": variable=fix_dur_min, value=500
        action assignment "Assign centerV": variable=centerV, value=(leftV+rightV)/2
        action live_queue_stimulus "Live Queue Stimulus": stimulus=cursor
        action update_stimulus_display "Update Stimulus Display 7"
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign sync 2": variable=sync, value=1
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign leverFixWin": variable=leverFixWin, value=leverFixWinInit
        action assignment "Assign leverTarWin": variable=leverTarWin, value=leverTarWinInit
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action live_queue_stimulus "Live Queue Fix 12": stimulus=handFix
        action assignment "Assign handFixY: fixY-(fix_sz+handFixSz)*3": variable=handFixY, value=handFixY
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWin/2, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        transition conditional "If !handFixOn, Transition to NoHandFixDuringFix": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringFix
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringFix": condition=!fixOn, target=NoEyeFixDuringFix
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If !handFixOn, Transition to NoHandFixDuringFix 2": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringFix
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringFix 2": condition=!fixOn, target=NoEyeFixDuringFix
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action assignment "Set fix_red to 1": variable=fix_red, value=1
        action if "If override, use theta_override 2": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Select theta -(theta-180) (mouseX>0)*181": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Set handFixR to 2": variable=handFixR, value=1
        action assignment "Set target_y 2": variable=target_y, value=amp*sin(theta*pi()/180)+handFixY
        action assignment "Set target_x 2": variable=target_x, value=amp*cos(theta*pi()/180)+handFixX
        action report "Annonce target direction 2": message=target direction = $theta
        action assignment "Set fix_blue to 2": variable=fix_blue, value=1
        action assignment "Set handFixB to 1": variable=handFixB, value=1
        action live_queue_stimulus "Live Queue target": stimulus=handTarget
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store set cue onset time 2": variable=set1_cue_onset_time_us, value=now()
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If !handFixOn, Transition to NoHandFixDuringOverlap": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=NoHandFixDuringOverlap
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringOverlap": condition=!fixOn, target=NoEyeFixDuringOverlap
        transition timer_expired "If saccadeTime Expired, Transition to Bad 2": target=Fix Off, timer=saccadeTime
      task_system_state "Fix Off"
        action dequeue_stimulus "Dequeue handFix": stimulus=handFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store set2 cue onset time 2": variable=set2_cue_onset_time_us, value=now()
        action start_timer "Start saccadeTime 2": timer=saccadeTime, duration=handTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to cursorToTarget": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-target_x)<leverTarWin/2, target=cursorToTarget
        transition conditional "If !!fixOn, Transition to NoEyeFixDuringRT": condition=!fixOn, target=NoEyeFixDuringRT
        transition conditional "If go to the other target, Transition to Hand2OtherTarget": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x))<leverTarWin/2, target=Hand2OtherTarget
        transition timer_expired "If saccadeTime Expired, Transition to LateRT": target=LateRT, timer=saccadeTime
      task_system_state "cursorToTarget"
        action assignment "Assign acquisitionTime 2": variable=acquisitionTime, value=now()
        action assignment "Assign cursor2x0": variable=cursor2x0, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
        action dequeue_stimulus "Dequeue cursor": stimulus=cursor
        action live_queue_stimulus "Live Queue cursor2": stimulus=cursor 2
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign productionInterval 2": variable=productionInterval, value=(acquisitionTime-set2_cue_onset_time_us)/1000
        action assignment "Assign RTfromTargetOn": variable=RTfromTargetOn, value=(acquisitionTime-set1_cue_onset_time_us)/1000
        action start_timer "Start cursorMove": timer=cursorMove, duration=durCursorMove-5/refreshRate(), duration_units=ms
        transition timer_expired "If cursorMove Expired, Transition to Rewarde": target=Reward, timer=cursorMove
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Assign cursor2Alpha": variable=cursor2Alpha, value=0
        action dequeue_stimulus "Dequeue cursor 2": stimulus=cursor 2
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign cursor2Alpha 2": variable=cursor2Alpha, value=1
        action if "If hand && RT>minHandRT, reward": condition=!idHandEyeOverlap && productionInterval>minHandRT
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=dbonus*(handTimeDur-productionInterval)/handTimeDur
          action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action if "If consecutiveCorrect>0, use new theta 2": condition=consecutiveCorrect>0
          action assignment "Select theta -(theta-180) (mouseX>0)*180": variable=theta, value=theta_min + disc_rand(0,theta_N-1)*(theta_max-theta_min)/(theta_N-1)
        action assignment "Assign cursorX": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
        action assignment "Assign handTargetOn": variable=handTargetOn, value=0
        action if "If theta>90, increment OverlapSaccade_correctLeft 2": condition=theta>90
          action assignment "increment OverlapSaccade_correctLeft": variable=OverlapSaccade_correctLeft, value=OverlapSaccade_correctLeft+1
        action if "If theta<=90, increment OverlapSaccade_correctRight 2": condition=theta<=90
          action assignment "increment OverlapSaccade_correctLeft": variable=OverlapSaccade_correctRight, value=OverlapSaccade_correctRight+1
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to Fix On 2": target=Fix On 2, timer=GreenTime
      task_system_state "Fix On 2"
        action live_queue_stimulus "Live Queue Stimulus 14": stimulus=cursor
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action dequeue_stimulus "Dequeue target 3": stimulus=handTarget
        action live_queue_stimulus "Live Queue handFix": stimulus=handFix
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign leverFixWin 2": variable=leverFixWin, value=leverFixWinBackCenter
        action assignment "Assign leverTarWin 2": variable=leverTarWin, value=leverTarWinBackCenter
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "IfhandFixOn, Transition to RewardFix 2/handFixTime": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWin/2, target=RewardFix 2
        transition timer_expired "If fix_wait Expired, Transition to End Trial": target=End Trial, timer=fixWait
      task_system_state "handFixTime"
        action assignment "Determine time to target on 2": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time 2": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action update_stimulus_display "Update Stimulus Display"
        action report "Report fix on": message=Fixation on.
        transition conditional "If !handFixOn, Transition to Bad": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)>leverFixWin/2, target=Bad
        transition timer_expired "If fix_time Expired, Transition to End Trial": target=RewardFix 2, timer=fix_time
      task_system_state "RewardFix 2"
        action assignment "Increment OverlapSaccade_correct": variable=OverlapSaccade_correct, value=OverlapSaccade_correct+1
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        transition direct "Always Go to ITI 2": target=End Trial
      task_system_state "End Trial"
        action assignment "Set handFixR to 1": variable=handFixR, value=1
        action assignment "Set handFixR to 6": variable=handFixG, value=1
        action assignment "Set handFixB to 4": variable=handFixB, value=1
        action assignment "Set fix_red to 5": variable=fix_green, value=1
        action assignment "Set fix_red to 6": variable=fix_blue, value=1
        action assignment "Set fix_red to 7": variable=fix_red, value=1
        action assignment "Set targ_green to 2": variable=targ_green, value=1
        action assignment "Set targ_blue to 3": variable=targ_blue, value=1
        action dequeue_stimulus "Dequeue target": stimulus=handTarget
        action dequeue_stimulus "Dequeue Fix 16": stimulus=Fix
        action dequeue_stimulus "Dequeue Fix 15": stimulus=handFix
        action assignment "Increment OverlapSaccade_trials": variable=OverlapSaccade_trials, value=OverlapSaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign sync 3": variable=sync, value=0
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
        transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
      task_system_state "Bad"
        action wait "Wait": duration=FeedbackTimeDur, duration_units=ms
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue Fix 8": stimulus=handFix
        action dequeue_stimulus "Dequeue target 2": stimulus=handTarget
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action assignment "Assign handFixX 2": variable=handFixX, value=0
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "NoEyeFixDuringFix"
        action assignment "Set fix_red to 9": variable=fix_green, value=0
        action assignment "Set fix_red to 8": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringFix": variable=OverlapSaccade_NoEyeFixDuringFix, value=OverlapSaccade_NoEyeFixDuringFix+1
        transition direct "Always Go to Bad": target=Bad
      task_system_state "NoHandFixDuringFix"
        action assignment "Set handFixR to 7": variable=handFixB, value=0
        action assignment "Set handFixB to 9": variable=handFixG, value=0
        action update_stimulus_display "Update Stimulus Display 13"
        action assignment "Increment OverlapSaccade_NoHandFixDuringFix": variable=OverlapSaccade_NoHandFixDuringFix, value=OverlapSaccade_NoHandFixDuringFix+1
        transition direct "Always Go to Bad 2": target=Bad
      task_system_state "NoEyeFixDuringOverlap"
        action assignment "Set fix_red to 11": variable=fix_green, value=0
        action assignment "Set fix_red to 10": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display 11"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringOverlap": variable=OverlapSaccade_NoEyeFixDuringOverlap, value=OverlapSaccade_NoEyeFixDuringOverlap+1
        transition direct "Always Go to Bad 3": target=Bad
      task_system_state "NoHandFixDuringOverlap"
        action assignment "Set handFixR to 8": variable=handFixB, value=0
        action assignment "Set handFixB to 10": variable=handFixG, value=0
        action update_stimulus_display "Update Stimulus Display 14"
        action assignment "Increment OverlapSaccade_NoHandFixDuringOverlap": variable=OverlapSaccade_NoHandFixDuringOverlap, value=OverlapSaccade_NoHandFixDuringOverlap+1
        transition direct "Always Go to Bad 4": target=Bad
      task_system_state "Hand2OtherTarget"
        action assignment "Set targ_green to 4": variable=targ_green, value=0
        action assignment "Set targ_blue to 5": variable=targ_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_Hand2OtherTarget": variable=OverlapSaccade_Hand2OtherTarget, value=OverlapSaccade_Hand2OtherTarget+1
        transition direct "Always Go to Bad 5": target=Bad
      task_system_state "NoEyeFixDuringRT"
        action assignment "Set fix_red to 13": variable=fix_green, value=0
        action assignment "Set fix_red to 12": variable=fix_blue, value=0
        action update_stimulus_display "Update Stimulus Display 12"
        action assignment "Increment OverlapSaccade_NoEyeFixDuringRT": variable=OverlapSaccade_NoEyeFixDuringRT, value=OverlapSaccade_NoEyeFixDuringRT+1
        transition direct "Always Go to Bad 6": target=Bad
      task_system_state "LateRT"
        action assignment "Set targ_green to 5": variable=targ_green, value=0
        action assignment "Set targ_blue to 6": variable=targ_blue, value=0
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment OverlapSaccade_LateRT": variable=OverlapSaccade_LateRT, value=OverlapSaccade_LateRT+1
        transition direct "Always Go to Bad 7": target=Bad
      task_system_state "No Fix"
        action assignment "Increment OverlapSaccade_NoFix": variable=OverlapSaccade_NoFix, value=OverlapSaccade_NoFix+1
        transition direct "Always Go to Bad 8": target=Bad
      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "MemorySaccade": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
    action assignment "Assign pstop": variable=pstop, value=0
    action assignment "Assign fix_red": variable=fix_red, value=1
    action assignment "Assign fix_green": variable=fix_green, value=1
    action assignment "Assign fix_blue": variable=fix_blue, value=1
    action queue_stimulus "Queue Stimulus 2": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 3"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
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      task_system_state "Grace"
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      task_system_state "Trial Start"
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      task_system_state "Fix Time"
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      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If targetTime Expired, Transition to Memory Time": target=Memory Time, timer=targetTime
      task_system_state "Memory Time"
        action dequeue_stimulus "Dequeue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=memoryTimeDur, value=-memory_dur_mean*logn(rand(0,1)) + memory_dur_min
        action start_timer "Start memoryTime": timer=memoryTime, duration=memoryTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Bad": condition=!fixOn, target=Bad
        transition timer_expired "If memoryTime Expired, Transition to Fix Off": target=Fix Off, timer=memoryTime
      task_system_state "Fix Off"
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      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action live_queue_stimulus "Live Queue target": stimulus=target
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (consecutiveCorrect-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=(rewardDur+bonusRewDur)*1000
        action assignment "Increment MemorySaccade_correct": variable=MemorySaccade_correct, value=MemorySaccade_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=rewardDur+bonusRewDur, duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action assignment "Increment MemorySaccade_trials": variable=MemorySaccade_trials, value=MemorySaccade_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
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      task_system_state "Bad"
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      task_system_state "No Fix"
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      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "_MovingBall_long": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=-1
    action queue_stimulus "Queue Stimulus": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 2"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        action assignment "Assign theta_min": variable=theta_min, value=170
        action assignment "Assign theta_max": variable=theta_max, value=190
        action assignment "Assign theta": variable=theta, value=180
        action assignment "Assign fixY": variable=fixY, value=-2
        action assignment "Assign iti 2": variable=iti, value=600
        action assignment "Assign fix_red": variable=fix_red, value=0
        action assignment "Assign fix_green": variable=fix_green, value=0
        action assignment "Assign fix_blue": variable=fix_blue, value=1
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
        action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
        action assignment "Assign afterReady": variable=afterReady, value=0
        action assignment "Assign afterSet1": variable=afterSet1, value=0
        action assignment "Assign afterSet2": variable=afterSet2, value=0
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
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      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign sync": variable=sync, value=1
        action assignment "Assign radius 7": variable=radius, value=10
        action assignment "Assign fixY 3": variable=fixY, value=-2
        action assignment "Reset stimEnding": variable=stimEnding, value=0
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action assignment "Assign ballRed": variable=ballRed, value=0
        action assignment "Assign ballGreen": variable=ballGreen, value=0
        action assignment "Assign ballBlue": variable=ballBlue, value=1
        action assignment "Select interval_min": variable=interval_min, value=800
        action assignment "Select interval_max": variable=interval_max, value=1200
        action if "If consecutiveCorrect==0, repeat theta & interval": condition=consecutiveCorrect==0
          action if_else "If/Else 4"
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        action if "If consecutiveCorrect!=0, sample theta & interval": condition=consecutiveCorrect!=0
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        action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
        action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
        action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=(Nsets+1)*interval
        action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
        action assignment "Assign Nsets": variable=Nsets, value=Nsets
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
        action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
        action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
        action report "Report fixating": message=Fixating.
        transition conditional "If fixOn == 0, Transition to Abort": condition=!fixOn, target=Abort
        transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
      task_system_state "Target On"
        action live_queue_stimulus "Live Queue target": stimulus=target
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Deterimine time to until fix off": variable=targetTimeDur, value=-target_dur_mean*logn(rand(0,1)) + target_dur_min
        action start_timer "Start targetTime": timer=targetTime, duration=targetTimeDur, duration_units=ms
        transition conditional "If fixOn == 0, Transition to Abort": condition=!fixOn, target=Abort
        transition timer_expired "If targetTime Expired, Transition to Ready": target=Ready, timer=targetTime
      task_system_state "Ready"
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action live_queue_stimulus "Live Queue ball": stimulus=ball
        action queue_stimulus "Queue ready cue": stimulus=ready_cue
        action queue_stimulus "Queue Interval1": stimulus=Interval1
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Ready": condition=!fixOn, target=After Ready
        transition conditional "When Interval1_ending && Nsets == 1, go to Set 2": condition=Interval1_ending && Nsets == 1, target=Set 2
        transition conditional "When Interval1_ending && Nsets == 2, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
      task_system_state "Set"
        action queue_stimulus "Queue Interval2": stimulus=Interval2
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action assignment "Reset set_ended": variable=set_ended, value=0
        action queue_stimulus "Queue set cue": stimulus=set_cue
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
        transition conditional "When set cue presentation completes, go to Set 2": condition=Interval2_ending, target=Set 2
      task_system_state "Set 2"
        action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set2_ended, value=0
        action if "If idRandSet,": condition=idRandSet
          action if "if thSetFlashAlpha<idFlashAlpha": condition=thSetFlashAlpha<idFlashAlpha
            action assignment "execute setFlashAlpha=0": variable=setFlashAlpha, value=0
          action if "if thSetFlashAlpha>=idFlashAlpha": condition=thSetFlashAlpha>=idFlashAlpha
            action assignment "execute setFlashAlpha=1": variable=setFlashAlpha, value=1
        action queue_stimulus "Queue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
          action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
        action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
        transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
      task_system_state "Production Interval"
        action assignment "Store set2Off": variable=set2Off, value=1
        action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Assign afterSet2": variable=afterSet2, value=1
        action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
        transition conditional "If !fixOn Transition to Production": condition=!fixOn, target=Production
        transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
      task_system_state "Production"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
        transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
        transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
      task_system_state "TargetAcquired"
        action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
        transition direct "Always Go to Early or Late": target=Early or Late
      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
        action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
        action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
        action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
        action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
        action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
        action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
        action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
        action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
        action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
        action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
        action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
        action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
        action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
        action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set_ended, value=0
        action assignment "Assign Nback": variable=Nback, value=Nback
        action assignment "Store set2Off": variable=set2Off, value=0
        action assignment "Assign radius 4": variable=radius, value=radius
        action assignment "Assign sync": variable=sync, value=0
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
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      task_system_state "Early or Late"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
        transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
      task_system_state "Abort"
        action report "Report trial aborted": message=Trial aborted!
        action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "After Ready"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - ready_cue_onset_time_us -interval*2000) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action assignment "Assign afterReady": variable=afterReady, value=1
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "After Set1"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action assignment "Assign afterSet1": variable=afterSet1, value=1
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "No Saccade"
        action assignment "Compute Production Time": variable=productionInterval, value=(now() - set2_cue_onset_time_us) / 1000.0
        action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        transition direct "Always Go to Bad": target=Bad
      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action if_else "If/Else 2"
          action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
            action assignment "Assign ballAlpha": variable=ballAlpha, value=ballAlpha+dballAlphaIncorrect
            action assignment "Assign ballAlphaProd 3": variable=ballAlphaProd, value=ballAlphaProd+dballAlphaIncorrect
            action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
          action if "Else": condition=1
            action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
            action assignment "Assign flashRate": variable=flashRate, value=flashRate
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
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      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "_MovingBall_short": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink": device=Eyelink 1000
    action start_device_IO "Start NIDaq Device": device=NIDaq Device
    action assignment "Assign bonusRewDur": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=-1
    action queue_stimulus "Queue Stimulus": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 2"
    task_system "Trials"
      task_system_state "Initial"
        action report "Announce Begin State System": message=State system beginning
        action assignment "Assign localTrials": variable=localTrials, value=0
        action assignment "Assign theta_min 2": variable=theta_min, value=170
        action assignment "Assign theta_max 2": variable=theta_max, value=190
        action assignment "Assign theta 2": variable=theta, value=180
        action assignment "Assign fixY 2": variable=fixY, value=2
        action assignment "Assign iti": variable=iti, value=900
        transition direct "Go to Fix On": target=Fix On
      task_system_state "Fix On"
        action assignment "Assign targ_red": variable=targ_red, value=1
        action assignment "Assign targ_blue": variable=targ_blue, value=1
        action assignment "Assign fix_red 3": variable=fix_red, value=1
        action assignment "Assign fix_green 3": variable=fix_green, value=0
        action assignment "Assign fix_blue 3": variable=fix_blue, value=0
        action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
        action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
        action assignment "Assign afterReady": variable=afterReady, value=0
        action assignment "Assign afterSet1": variable=afterSet1, value=0
        action assignment "Assign afterSet2": variable=afterSet2, value=0
        action live_queue_stimulus "Live Queue Fix": stimulus=Fix
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
        action report "Report fix on": message=Fixation on.
        transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
        transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
      task_system_state "Grace"
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      task_system_state "Trial Start"
        action assignment "Assign startTrial": variable=startTrial, value=1
        action assignment "Assign sync": variable=sync, value=1
        action assignment "Assign radius 5": variable=radius, value=10
        action assignment "Assign fixY 4": variable=fixY, value=2
        action assignment "Reset stimEnding": variable=stimEnding, value=0
        action if "If override, use theta_override": condition=override
          action assignment "Set theta": variable=theta, value=theta_override
        action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
        action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
        action assignment "Assign ballRed 2": variable=ballRed, value=1
        action assignment "Assign ballGreen 2": variable=ballGreen, value=0
        action assignment "Assign ballBlue 2": variable=ballBlue, value=0
        action assignment "Select interval_min 2": variable=interval_min, value=480
        action assignment "Select interval_max 2": variable=interval_max, value=800
        action if "If consecutiveCorrect==0, repeat theta & interval": condition=consecutiveCorrect==0
          action if_else "If/Else 4"
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        action if "If consecutiveCorrect!=0, sample theta & interval": condition=consecutiveCorrect!=0
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        action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
        action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
        action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=(Nsets+1)*interval
        action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
        action assignment "Assign Nsets": variable=Nsets, value=Nsets
        action report "Annonce target direction": message=target direction = $theta
        transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
        transition direct "Always Go to Fix Time": target=Fix Time
      task_system_state "Fix Time"
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      task_system_state "Target On"
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      task_system_state "Ready"
        action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action live_queue_stimulus "Live Queue ball": stimulus=ball
        action queue_stimulus "Queue ready cue": stimulus=ready_cue
        action queue_stimulus "Queue Interval1": stimulus=Interval1
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Ready": condition=!fixOn, target=After Ready
        transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending && Nsets == 1, target=Set 2
        transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
      task_system_state "Set"
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      task_system_state "Set 2"
        action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
        action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set2_ended, value=0
        action if "If idRandSet, 2": condition=idRandSet
          action if "if thSetFlashAlpha<idFlashAlpha 2": condition=thSetFlashAlpha<idFlashAlpha
            action assignment "execute setFlashAlpha=0": variable=setFlashAlpha, value=0
          action if "if thSetFlashAlpha>=idFlashAlpha 2": condition=thSetFlashAlpha>=idFlashAlpha
            action assignment "execute setFlashAlpha=1": variable=setFlashAlpha, value=1
        action queue_stimulus "Queue set2 cue": stimulus=set2_cue
        action update_stimulus_display "Update Stimulus Display"
        action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
          action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
        action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
        transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
        transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
      task_system_state "Production Interval"
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      task_system_state "Production"
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      task_system_state "TargetAcquired"
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      task_system_state "Reward"
        action report "Report success": message=Success!
        action assignment "Set targ_red to 0": variable=targ_red, value=0
        action assignment "Set targ_blue to 0": variable=targ_blue, value=0
        action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
        action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
        action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
        action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
        action assignment "Assign ballAlphaProd 2": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
        action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
        action assignment "assign consecutiveIncorrect 2": variable=consecutiveIncorrect, value=0
        action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
        action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
        action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
        action update_stimulus_display "Update Stimulus Display"
        action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
        transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
      task_system_state "End Trial"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ball": stimulus=ball
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
        action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
        action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
        action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
        action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
        action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
        action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
        action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
        action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
        action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
        action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
        action assignment "Reset ready_ended": variable=ready_ended, value=0
        action assignment "Reset set_ended": variable=set_ended, value=0
        action assignment "Reset set2_ended": variable=set_ended, value=0
        action assignment "Assign Nback": variable=Nback, value=Nback
        action assignment "Store set2Off": variable=set2Off, value=0
        action assignment "Assign radius": variable=radius, value=radius
        action assignment "Assign sync": variable=sync, value=0
        action assignment "Assign endTrial": variable=endTrial, value=1
        transition conditional "If localTrials == trialNum, Transition to Exit State System": condition=localTrials >= trialNum || pstop, target=Exit State System
        transition direct "Always Go to ITI": target=ITI
      task_system_state "ITI"
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      task_system_state "Early or Late"
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      task_system_state "Abort"
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      task_system_state "After Ready"
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      task_system_state "After Set1"
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      task_system_state "No Saccade"
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      task_system_state "Bad"
        action dequeue_stimulus "Dequeue Fix": stimulus=Fix
        action dequeue_stimulus "Dequeue target": stimulus=target
        action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
        action update_stimulus_display "Update Stimulus Display"
        action if_else "If/Else 2"
          action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
            action assignment "Assign ballAlpha": variable=ballAlpha, value=ballAlpha+dballAlphaIncorrect
            action assignment "Assign ballAlphaProd 4": variable=ballAlphaProd, value=ballAlphaProd+dballAlphaIncorrect
            action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
          action if "Else": condition=1
            action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
            action assignment "Assign flashRate": variable=flashRate, value=flashRate
        action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
        action assignment "Increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
        action report "Report failure": message=Failure.
        action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
        transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
      task_system_state "No Fix"
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      task_system_state "Exit State System"
        action report "Announce Exit State System": message=Leaving state system
        transition yield "Return to parent task system"
  protocol "_blockedTwoPrior": nsamples=3000, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "long": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 2"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong:min(round(-(maxTrialNumBlock-minTrialNumBlock)/2*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)": variable=trialNumBlockLong, value=-meanTrialNumBlock*logn(rand(0,1)) + minTrialNumBlock
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign radius": variable=radius, value=radius+radiusStep*numRadiusStepBoost
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-0.1
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign fix_red": variable=fix_red, value=0
          action assignment "Assign fix_green": variable=fix_green, value=0
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 11": variable=handFixB, value=1
          action assignment "Set handFixG to 10": variable=handFixG, value=1
          action assignment "Set handFixR to 11": variable=handFixR, value=1
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 16": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 6": variable=fixY, value=-0.1
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign ballRed": variable=ballRed, value=0
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=1
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=(Nsets+1)*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action live_queue_stimulus "Live Queue ball": stimulus=ball
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 18": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If fixOn == 0, Transition to After Ready": condition=!fixOn, target=After Ready
          transition conditional "When Interval1_ending && Nsets == 1, go to Set 2": condition=Interval1_ending && Nsets == 1, target=Set 2
          transition conditional "When Interval1_ending && Nsets == 2, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
        task_system_state "Set"
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        task_system_state "Set 2"
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action dequeue_stimulus "Dequeue occluder_cue 4": stimulus=occluder_cue
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action if "If idRandSet,": condition=idRandSet
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          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 19": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
            action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 6": stimulus=Fix2
          action dequeue_stimulus "Dequeue occluder_cue 5": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
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        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 111": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action dequeue_stimulus "Dequeue occluder_cue 6": stimulus=occluder_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 112": stimulus=handFix
          action dequeue_stimulus "Dequeue occluder_cue": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet1": variable=afterSet1, value=1
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue set2 cue 3": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "No Saccade"
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        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 3": stimulus=Fix2
          action dequeue_stimulus "Dequeue occluder_cue 2": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
              action assignment "Assign ballAlpha": variable=ballAlpha, value=ballAlpha+dballAlphaIncorrect
              action assignment "Assign radius": variable=radius, value=radius + radiusStep
              action assignment "Assign ballAlphaProd 3": variable=ballAlphaProd, value=ballAlphaProd+dballAlphaIncorrect
              action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
            action if "Else": condition=1
              action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
              action assignment "Assign flashRate": variable=flashRate, value=flashRate
          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 2": stimulus=Fix2
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
    block "short": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 3"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockShort": variable=trialNumBlockShort, value=-meanTrialNumBlock*logn(rand(0,1)) + minTrialNumBlock
          action assignment "Assign theta 2": variable=theta, value=180
          action assignment "Assign fixY 2": variable=fixY, value=0.1
          action assignment "Assign consecutiveCorrect 3": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 4": variable=consecutiveIncorrect, value=0
          action assignment "Assign iti": variable=iti, value=900
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign fix_red 3": variable=fix_red, value=1
          action assignment "Assign fix_green 3": variable=fix_green, value=0
          action assignment "Assign fix_blue 3": variable=fix_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 9": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 17": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn, Transition to Trial Start": condition=fixOn, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign fixY 5": variable=fixY, value=0.1
          action assignment "Assign ballRed 2": variable=ballRed, value=1
          action assignment "Assign ballGreen 2": variable=ballGreen, value=0
          action assignment "Assign ballBlue 2": variable=ballBlue, value=0
          action assignment "Select interval_min 2": variable=interval_min, value=480
          action assignment "Select interval_max 2": variable=interval_max, value=800
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=(Nsets+1)*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action live_queue_stimulus "Live Queue ball": stimulus=ball
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 8": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 5": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 110": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If fixOn == 0, Transition to After Ready": condition=!fixOn, target=After Ready
          transition conditional "When Interval1_ending, go to Set 2": condition=Interval1_ending && Nsets == 1, target=Set 2
          transition conditional "When Interval1_ending, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
        task_system_state "Set"
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        task_system_state "Set 2"
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action dequeue_stimulus "Dequeue occluder_cue 7": stimulus=occluder_cue
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action if "If idRandSet, 2": condition=idRandSet
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          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 7": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 6": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 111": stimulus=handFix
          action update_stimulus_display "Update Stimulus Display"
          action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
            action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If fixOn == 0, Transition to After Set1": condition=!fixOn, target=After Set1
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
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        task_system_state "Production"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix3": stimulus=Fix2
          action dequeue_stimulus "Dequeue occluder_cue 8": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=saccadeTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
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        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 3": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd 2": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius 3": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect 2": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur 2": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix2": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 110": stimulus=handFix
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action dequeue_stimulus "Dequeue occluder_cue 9": stimulus=occluder_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockShort || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix2": stimulus=Fix2
          action dequeue_stimulus "Dequeue occluder_cue 10": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
          action assignment "Compute Production Time": variable=productionInterval, value=(now() - set1_cue_onset_time_us -interval*1000) / 1000.0
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterSet1": variable=afterSet1, value=1
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue set2 cue 2": stimulus=set2_cue
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "No Saccade"
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        task_system_state "Bad"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix2": stimulus=Fix2
          action dequeue_stimulus "Dequeue occluder_cue 3": stimulus=occluder_cue
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display 6"
          action if_else "If/Else 2"
            action if "If afterSet2, update win_fraction and flashRate": condition=afterSet2
              action assignment "Assign ballAlpha": variable=ballAlpha, value=ballAlpha+dballAlphaIncorrect
              action assignment "Assign ballAlphaProd 4": variable=ballAlphaProd, value=ballAlphaProd+dballAlphaIncorrect
              action assignment "Assign radius 2": variable=radius, value=radius + radiusStep
              action assignment "Assign flashRate": variable=flashRate, value=flashRate+dflashRate
            action if "Else": condition=1
              action assignment "Assign win_fraction": variable=win_fraction, value=win_fraction
              action assignment "Assign flashRate": variable=flashRate, value=flashRate
          action assignment "Assign consecutiveCorrect": variable=consecutiveCorrect, value=0
          action assignment "Increment consecutiveIncorrect": variable=consecutiveIncorrect, value=consecutiveIncorrect+1
          action report "Report failure": message=Failure.
          action start_timer "Start Timeout": timer=Timeout, duration=timeout, duration_units=ms
          transition timer_expired "If Timeout Expired, Transition to End Trial": target=End Trial, timer=Timeout
        task_system_state "No Fix"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix2": stimulus=Fix2
          action update_stimulus_display "Update Stimulus Display"
          action report "Report no fixation": message=Failed to fixate.
          action start_timer "Start NoFixWait": timer=NoFixWait, duration=NoFixWaitDur, duration_units=ms
          transition timer_expired "If NoFixWait Expired, Transition to Fix On": target=Fix On, timer=NoFixWait
        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "_blockedLongPrior hand with fixOff after SET": nsamples=3000, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "long": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 2"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong:min(round(-(maxTrialNumBlock-minTrialNumBlock)/2*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)": variable=trialNumBlockLong, value=5000
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-0.1
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=0
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign fix_red 6": variable=fix_red, value=1
          action assignment "Assign fix_green 5": variable=fix_green, value=1
          action assignment "Assign fix_blue 6": variable=fix_blue, value=1
          action assignment "Set handFixB to 8": variable=handFixB, value=1
          action assignment "Set handFixG to 9": variable=handFixG, value=0
          action assignment "Set handFixR to 10": variable=handFixR, value=0
          action assignment "Set handFixAlpha to 1": variable=handFixAlpha, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 6": variable=fixY, value=-0.1
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign ballRed": variable=ballRed, value=0
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=1
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
          action assignment "Determine time to target on": variable=fix_time_dur, value=-fix_dur_mean*logn(rand(0,1)) + fix_dur_min
          action start_timer "Start fix_time": timer=fix_time, duration=fix_time_dur, duration_units=ms
          action report "Report fixating": message=Fixating.
          transition conditional "If !fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)> leverFixWinInit/2, target=Abort
          transition timer_expired "If fix_time Expired, Transition to Target On": target=Target On, timer=fix_time
        task_system_state "Target On"
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action live_queue_stimulus "Live Queue ball 2": stimulus=ball
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 4": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Ready": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending && Nsets == 1, go to Set 2": condition=Interval1_ending && Nsets == 1, target=Set 2
          transition conditional "When Interval1_ending && Nsets == 2, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
        task_system_state "Set"
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        task_system_state "Set 2"
          action dequeue_stimulus "Dequeue set cue": stimulus=set_cue
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set2_ended, value=0
          action if "If idRandSet,": condition=idRandSet
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          action queue_stimulus "Queue set2 cue": stimulus=set2_cue
          action live_queue_stimulus "Live Queue Fix 10": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 4": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 15": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 5": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action if "If Nsets == 1, set cue onset time": condition=Nsets == 1
            action assignment "Store set cue onset time": variable=set1_cue_onset_time_us, value=now()
          action assignment "Store set2 cue onset time": variable=set2_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Set1": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Set1
          transition conditional "When set2 cue presentation completes, go to Production Interval": condition=set2_ended, target=Production Interval
        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action if "If dtSetHandTarget>0, fixation off aftert dtSetHandTarget": condition=dtSetHandTarget>0
            action wait "Wait 3": duration=interval-dtSetHandTarget, duration_units=ms
            action assignment "Assign handFixAlpha: Dequeue handFix": variable=handFixAlpha, value=handFixAlpha2
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If !handFixOn, Transition to Production": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Production
          transition conditional "If !fixOn, Transition to Abort": condition=!fixOn, target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
        task_system_state "Production"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=handTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(target_x+handFixX2))<leverTarWinInit/2, target=TargetAcquired
          transition conditional "If go to the other target, Transition to Abort": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-(-target_x+handFixX2))<leverTarWinInit/2, target=Abort
          transition conditional "If !fixOn, Transition to Abort 2": condition=!fixOn, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign cursor2x1": variable=cursor2x0, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action dequeue_stimulus "Dequeue cursor": stimulus=cursor
          action dequeue_stimulus "Dequeue ball 2": stimulus=ball
          action live_queue_stimulus "Live Queue cursor2": stimulus=cursor 2
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start cursorMove:-5/refreshRate()": timer=cursorMove, duration=durCursorMove, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to TargetAcquired 2": target=TargetAcquired 2, timer=cursorMove
        task_system_state "TargetAcquired 2"
          action assignment "Assign cursor2Alpha 4": variable=cursor2Alpha, value=0
          action dequeue_stimulus "Dequeue cursor 3": stimulus=cursor 2
          action dequeue_stimulus "Dequeue target 4": stimulus=target
          action live_queue_stimulus "Live Queue Stimulus 14": stimulus=cursor
          action live_queue_stimulus "Live Queue handFix": stimulus=handFix
          action assignment "Assign handFixAlpha: Dequeue handFix 2": variable=handFixAlpha, value=1
          action update_stimulus_display "Update Stimulus Display 15"
          action assignment "Assign cursor2Alpha 3": variable=cursor2Alpha, value=1
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
          transition direct "Always Go to Early or Late": target=Early or Late
        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action dequeue_stimulus "Dequeue ball 3": stimulus=ball
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action live_queue_stimulus "Live Queue Stimulus 8 cursor": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action live_queue_stimulus "Live Queue Stimulus 9 cursor": stimulus=cursor
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action live_queue_stimulus "Live Queue Stimulus 10": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action if "If hand fixation breaks, tp measurement": condition=fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=(now() - ready_cue_onset_time_us -interval*2000) / 1000.0
          action if "If eye fixation breaks, no tp measurement": condition=!fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action dequeue_stimulus "Dequeue Fix 19": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 18": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 17": stimulus=handFix
          action dequeue_stimulus "Dequeue ball 4": stimulus=ball
          action live_queue_stimulus "Live Queue Stimulus 11": stimulus=cursor
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur*2, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "_blockedTwoPrior hand with fixOff after SET removeCursor": nsamples=3000, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "long": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 2"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-(maxTrialNumBlock-minTrialNumBlock)/2*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-0.1
          action assignment "Assign handFixY 4": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=0
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign fix_red 6": variable=fix_red, value=1
          action assignment "Assign fix_green 5": variable=fix_green, value=1
          action assignment "Assign fix_blue 6": variable=fix_blue, value=1
          action assignment "Set handFixB to 8": variable=handFixB, value=1
          action assignment "Set handFixG to 9": variable=handFixG, value=0
          action assignment "Set handFixR to 10": variable=handFixR, value=0
          action assignment "Set handFixAlpha to 1": variable=handFixAlpha, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action assignment "Assign cursorAlpha 9": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=-0.1
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign ballRed": variable=ballRed, value=0
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=1
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "TargetAcquired 2"
          action dequeue_stimulus "Dequeue cursor 3": stimulus=cursor 2
          action dequeue_stimulus "Dequeue target 4": stimulus=target
          action live_queue_stimulus "Live Queue Stimulus 14": stimulus=cursor
          action live_queue_stimulus "Live Queue handFix": stimulus=handFix
          action assignment "Assign handFixAlpha: Dequeue handFix 2": variable=handFixAlpha, value=1
          action update_stimulus_display "Update Stimulus Display 15"
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          transition conditional "If correct, Transition to Reward": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
          transition direct "Always Go to Early or Late": target=Early or Late
        task_system_state "Reward"
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        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action assignment "Assign cursorAlpha 8": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
    block "short": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials S2"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlocksShort": variable=trialNumBlockShort, value=min(round(-(maxTrialNumBlock-minTrialNumBlock)/2*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=0.1
          action assignment "Assign handFixY 5": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=900
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=0
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=480
          action assignment "Select interval_max": variable=interval_max, value=800
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign fix_red 6": variable=fix_red, value=1
          action assignment "Assign fix_green 5": variable=fix_green, value=1
          action assignment "Assign fix_blue 6": variable=fix_blue, value=1
          action assignment "Set handFixB to 8": variable=handFixB, value=0
          action assignment "Set handFixG to 9": variable=handFixG, value=0
          action assignment "Set handFixR to 10": variable=handFixR, value=1
          action assignment "Set handFixAlpha to 1": variable=handFixAlpha, value=1
          action assignment "Assign targ_blue": variable=targ_blue, value=1
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_blue": variable=ballFeedback_blue, value=1
          action assignment "Assign ballFeedback_green": variable=ballFeedback_blue, value=1
          action assignment "Assign afterReady": variable=afterReady, value=0
          action assignment "Assign afterSet1": variable=afterSet1, value=0
          action assignment "Assign afterSet2": variable=afterSet2, value=0
          action live_queue_stimulus "Live Queue Fix 11": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 13": stimulus=handFix
          action assignment "Assign cursorAlpha 7": variable=cursorAlpha, value=1
          action live_queue_stimulus "Live Queue Stimulus 3": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start fixWait": timer=fixWait, duration=fixWaitDur, duration_units=ms
          action report "Report fix on": message=Fixation on.
          transition conditional "If fixOn & handFixOn, Transition to Trial Start": condition=fixOn && abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX)<leverFixWinBackCenter/2, target=Trial Start
          transition timer_expired "If fix_wait Expired, Transition to No Fix": target=No Fix, timer=fixWait
        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 8": variable=fixY, value=0.1
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          action assignment "Assign ballRed": variable=ballRed, value=1
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=0
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "TargetAcquired 2"
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        task_system_state "Reward"
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        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action assignment "Assign cursorAlpha 6": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockShort || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action dequeue_stimulus "Dequeue ball": stimulus=ball
          action live_queue_stimulus "Live Queue Stimulus 9 cursor": stimulus=cursor
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action if "If abs(productionInterval - interval)/interval <= 2": condition=abs(productionInterval - interval)/interval <= 2
            action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "_blockedTwoPrior hand with fixOff after SET removeCursor removeBall": nsamples=3000, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action assignment "Assign idHandEye 2": variable=idHandEye, value=0
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "long": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 3333"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign handFixY": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=0
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 7": variable=fixY, value=-dFixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign ballRed": variable=ballRed, value=0
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=1
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
          action assignment "Assign tStart": variable=tStart, value=nextFrameTime()
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action queue_stimulus "Queue ready cue": stimulus=ready_cue
          action queue_stimulus "Queue Interval1": stimulus=Interval1
          action live_queue_stimulus "Live Queue Fix 3": stimulus=Fix2
          action live_queue_stimulus "Live Queue Fix 2": stimulus=Fix
          action live_queue_stimulus "Live Queue Fix 14": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 4": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Store ready cue onset time": variable=ready_cue_onset_time_us, value=now()
          transition conditional "If !fixOn | !handFixOn, Transition to After Ready": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=After Ready
          transition conditional "When Interval1_ending && Nsets == 1, go to Set 2": condition=Interval1_ending && Nsets == 1, target=Set 2
          transition conditional "When Interval1_ending && Nsets == 2, go to Set": condition=Interval1_ending && Nsets == 2, target=Set
        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign cursor2x1": variable=cursor2x0, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action dequeue_stimulus "Dequeue cursor": stimulus=cursor
          action live_queue_stimulus "Live Queue cursor2": stimulus=cursor 2
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start cursorMove:-5/refreshRate()": timer=cursorMove, duration=durCursorMove, duration_units=ms
          transition timer_expired "If cursorMove Expired, Transition to TargetAcquired 2": target=TargetAcquired 2, timer=cursorMove
        task_system_state "TargetAcquired 2"
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        task_system_state "Reward"
          action report "Report success": message=Success!
          action assignment "Set targ_red to 0": variable=targ_red, value=0
          action assignment "Set targ_blue to 0": variable=targ_blue, value=0
          action assignment "Set targ_green to 1": variable=targ_green, value=1
          action assignment "Set ballFeedback_red to 0": variable=ballFeedback_red, value=0
          action assignment "Set ballFeedback_blue to 0": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_green 3": variable=ballFeedback_green, value=1
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action live_queue_stimulus "Live Queue Stimulus 8 cursor": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Increment consecutiveCorrect": variable=consecutiveCorrect, value=consecutiveCorrect + 1
          action assignment "Assign ballAlpha": variable=ballAlpha, value=max(ballAlpha-dAlpha,0)
          action assignment "Assign ballAlphaProd": variable=ballAlphaProd, value=max(ballAlphaProd-dballAlphaProd,0)
          action assignment "Assign radius": variable=radius, value=max(radius-radiusStep,0)
          action assignment "Assign flashRate": variable=flashRate, value=flashRate-dflashRate
          action assignment "assign consecutiveIncorrect": variable=consecutiveIncorrect, value=0
          action assignment "Assign bonusRewDur": variable=bonusRewDur, value=min(200, (min(4,consecutiveCorrect)-1)*dbonus)
          action assignment "Assign win_fraction 2": variable=win_fraction, value=win_fraction-dwin
          action pulse "Pulse rewardOut": variable=rewardOut, duration=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Assign totalRewDur": variable=totalRewDur, value=bonusRewDur*1000+rewardDur*1000*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction )
          action assignment "Increment MovingBall_correct": variable=MovingBall_correct, value=MovingBall_correct+1
          action if "If theta>90, increment MovingBall_correctLeft 2": condition=theta>90
            action assignment "increment MovingBall_correctLeft": variable=MovingBall_correctLeft, value=MovingBall_correctLeft +1
          action if "If theta<=90, increment MovingBall_correctRight 2": condition=theta<=90
            action assignment "increment MovingBall_correctRight": variable=MovingBall_correctRight, value=MovingBall_correctRight +1
          action assignment "Assign thetaFeedback 4": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start GreenTime": timer=GreenTime, duration=bonusRewDur+rewardDur*max(0.00001,1-abs(productionInterval - interval)/interval/win_fraction ), duration_units=ms
          transition timer_expired "If GreenTime Expired, Transition to End Trial": target=End Trial, timer=GreenTime
        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action assignment "Assign cursorAlpha 8": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockLong || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 9 cursor": stimulus=cursor
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
          action report "Report trial aborted": message=Trial aborted!
          action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action live_queue_stimulus "Live Queue Stimulus 10": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display"
          transition direct "Always Go to Bad": target=Bad
        task_system_state "After Ready"
          action if "If hand fixation breaks, tp measurement": condition=fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=(now() - ready_cue_onset_time_us -interval*2000) / 1000.0
          action if "If eye fixation breaks, no tp measurement": condition=!fixOn
            action assignment "Compute Production Time": variable=productionInterval, value=-2*interval
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign afterReady": variable=afterReady, value=1
          action dequeue_stimulus "Dequeue ready cue": stimulus=ready_cue
          action dequeue_stimulus "Dequeue Fix 19": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 18": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 17": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 11": stimulus=cursor
          action assignment "Assign ballFeedback_blue 3": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red 2": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 4": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 2": variable=targ_red, value=1
          action assignment "Set targ_blue to 7": variable=targ_blue, value=0
          action assignment "Set targ_green to 7": variable=targ_green, value=0
          action live_queue_stimulus "Live Queue ballFeedback 2": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start FeedbackTime 2": timer=FeedbackTime, duration=FeedbackTimeDur*2, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad 2": target=Bad, timer=FeedbackTime
        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
    block "short": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials S3333"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlocksShort": variable=trialNumBlockShort, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign handFixY 6": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=900
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=0
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=480
          action assignment "Select interval_max": variable=interval_max, value=800
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
          action assignment "Assign startTrial": variable=startTrial, value=1
          action assignment "Assign sync": variable=sync, value=1
          action assignment "Assign fixY 8": variable=fixY, value=dFixY
          action assignment "Assign cursorAlpha": variable=cursorAlpha, value=cursorAlpha2
          action assignment "Reset stimEnding": variable=stimEnding, value=0
          action if "If override, use theta_override": condition=override
            action assignment "Set theta": variable=theta, value=theta_override
          action assignment "Assign ballRed": variable=ballRed, value=1
          action assignment "Assign ballGreen": variable=ballGreen, value=0
          action assignment "Assign ballBlue": variable=ballBlue, value=0
          action if "If consecutiveCorrect==0&&localTrials>0, repeat theta & interval": condition=consecutiveCorrect==0&&localTrials>0
            action if_else "If/Else 4"
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          action if "If consecutiveCorrect!=0||localTrials==0, sample theta & interval": condition=consecutiveCorrect!=0||localTrials==0
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          action assignment "set idFlashAlpha": variable=idFlashAlpha, value=rand(0,1)
          action assignment "Assign handFixX2": variable=handFixX2, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign intervalFrames": variable=intervalFrames, value=round(refreshRate()*interval/1000)
          action assignment "Assign saccade_wait_dur": variable=saccade_wait_dur, value=3*interval
          action assignment "Set target_x": variable=target_x, value=amp*cos(theta*pi()/180)
          action assignment "Set target_y": variable=target_y, value=amp*sin(theta*pi()/180)
          action assignment "Assign StartTheta": variable=StartTheta, value=theta-ballArcLength
          action assignment "Assign Nsets": variable=Nsets, value=Nsets
          action report "Annonce target direction": message=target direction = $theta
          transition conditional "If !!fixOn | !handFixOn, Transition to Abort": condition=!fixOn || abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition direct "Always Go to Fix Time": target=Fix Time
        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "TargetAcquired 2"
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        task_system_state "Reward"
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        task_system_state "End Trial"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 11": stimulus=handFix
          action dequeue_stimulus "Dequeue Fix 5": stimulus=Fix2
          action dequeue_stimulus "Dequeue target": stimulus=target
          action dequeue_stimulus "Dequeue ballFeedback": stimulus=ballFeedback
          action dequeue_stimulus "Dequeue Interval1": stimulus=Interval1
          action dequeue_stimulus "Dequeue Interval2": stimulus=Interval2
          action stop_dynamic_stimulus "Stop ready cue": stimulus=ready_cue
          action stop_dynamic_stimulus "Stop set cue": stimulus=set_cue
          action stop_dynamic_stimulus "Stop set2 cue": stimulus=set2_cue
          action stop_dynamic_stimulus "Stop Interval1": stimulus=Interval1
          action stop_dynamic_stimulus "Stop Interval2": stimulus=Interval2
          action assignment "Increment MovingBall_trials": variable=MovingBall_trials, value=MovingBall_trials+1
          action assignment "Increment localTrials": variable=localTrials, value=localTrials+1
          action assignment "Reset Interval1_ending": variable=Interval1_ending, value=0
          action assignment "Reset Interval2_ending": variable=Interval2_ending, value=0
          action assignment "Reset ready_ended": variable=ready_ended, value=0
          action assignment "Reset set_ended": variable=set_ended, value=0
          action assignment "Reset set2_ended": variable=set_ended, value=0
          action assignment "Assign Nback": variable=Nback, value=Nback
          action assignment "Set targ_green to 3": variable=targ_green, value=1
          action assignment "Set targ_blue to 4": variable=targ_blue, value=1
          action assignment "Set targ_red to 5": variable=targ_red, value=1
          action assignment "Store set2Off": variable=set2Off, value=0
          action assignment "Assign sync": variable=sync, value=0
          action assignment "Assign endTrial": variable=endTrial, value=1
          action assignment "Assign cursorAlpha 6": variable=cursorAlpha, value=1
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If localTrials == trialNumBlock, Transition to Exit State System": condition=localTrials >= trialNumBlockShort || pstop, target=Exit State System
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
          action dequeue_stimulus "Dequeue Fix": stimulus=Fix
          action dequeue_stimulus "Dequeue Fix 4": stimulus=Fix2
          action dequeue_stimulus "Dequeue Fix 12": stimulus=handFix
          action live_queue_stimulus "Live Queue Stimulus 9 cursor": stimulus=cursor
          action assignment "Assign ballFeedback_blue 2": variable=ballFeedback_blue, value=0
          action assignment "Assign ballFeedback_red": variable=ballFeedback_red, value=1
          action assignment "Assign ballFeedback_green 2": variable=ballFeedback_green, value=0
          action assignment "Set targ_red to 1": variable=targ_red, value=1
          action assignment "Set targ_blue to 1": variable=targ_blue, value=0
          action assignment "Set targ_green to 6": variable=targ_green, value=0
          action if "If abs(productionInterval - interval)/interval <= 2": condition=abs(productionInterval - interval)/interval <= 2
            action live_queue_stimulus "Live Queue ballFeedback": stimulus=ballFeedback
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Assign thetaFeedback 2": variable=thetaFeedback, value=StartTheta+ballArcLength*(acquisitionTime - tStart)/(1e3*(Nsets+1)*interval)
          action start_timer "Start FeedbackTime": timer=FeedbackTime, duration=FeedbackTimeDur, duration_units=ms
          transition timer_expired "If FeedbackTime Expired, Transition to Bad": target=Bad, timer=FeedbackTime
        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "_blockedTwoPrior eye with fixOff after SET removeCursor removeBall": nsamples=3000, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action assignment "Assign idHandEye": variable=idHandEye, value=1
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "longEye": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials 33335"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign handFixY 7": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=0
          action assignment "Assign fix_green": variable=fix_green, value=0
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=1
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign fix_red 6": variable=fix_red, value=0
          action assignment "Assign fix_green 5": variable=fix_green, value=0
          action assignment "Assign fix_blue 6": variable=fix_blue, value=1
          action assignment "Set handFixB to 8": variable=handFixB, value=1
          action assignment "Set handFixG to 9": variable=handFixG, value=1
          action assignment "Set handFixR to 10": variable=handFixR, value=1
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action if "If dtSetHandTarget>0, fixation off aftert dtSetHandTarget": condition=dtSetHandTarget>0
            action wait "Wait 3": duration=interval-dtSetHandTarget, duration_units=ms
            action assignment "Assign handFixAlpha: Dequeue handFix": variable=handFixAlpha, value=handFixAlpha2
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If !fixOn, Transition to Production": condition=!fixOn, target=Production
          transition conditional "If !handFixOn, Transition to Abort 3": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
        task_system_state "Production"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=handTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
          transition conditional "If !handFixOn, Transition to Abort 4": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
          action assignment "Assign productionInterval": variable=productionInterval, value=(now()-set2_cue_onset_time_us)/1000
          action assignment "Assign acquisitionTime": variable=acquisitionTime, value=now()
          action assignment "Assign cursorX 2": variable=cursorX, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign cursor2x1": variable=cursor2x0, value=(ai0-centerV)/(rightV-centerV)*amp*gainV
          action assignment "Assign cursorAlpha 5": variable=cursorAlpha, value=1
          transition conditional "If correct, Transition to Reward 2": condition=abs(productionInterval - interval)/interval <= win_fraction, target=Reward
          transition direct "Always Go to Early or Late 2": target=Early or Late
        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
    block "shortEye": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "Trials S33335"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlocksShort": variable=trialNumBlockShort, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign handFixY 8": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=900
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=0
          action assignment "Assign fix_blue": variable=fix_blue, value=0
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=1
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=480
          action assignment "Select interval_max": variable=interval_max, value=800
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
          action assignment "Assign targ_red": variable=targ_red, value=1
          action assignment "Assign fix_red 6": variable=fix_red, value=1
          action assignment "Assign fix_green 5": variable=fix_green, value=0
          action assignment "Assign fix_blue 6": variable=fix_blue, value=0
          action assignment "Set handFixB to 8": variable=handFixB, value=1
          action assignment "Set handFixG to 9": variable=handFixG, value=1
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
          action assignment "Store set2Off": variable=set2Off, value=1
          action dequeue_stimulus "Dequeue set2 cue": stimulus=set2_cue
          action if "If dtSetHandTarget>0, fixation off aftert dtSetHandTarget": condition=dtSetHandTarget>0
            action wait "Wait 3": duration=interval-dtSetHandTarget, duration_units=ms
            action assignment "Assign handFixAlpha: Dequeue handFix": variable=handFixAlpha, value=handFixAlpha2
          action update_stimulus_display "Update Stimulus Display 9"
          action assignment "Assign afterSet2": variable=afterSet2, value=1
          action start_timer "Start saccade_wait": timer=saccade_wait, duration=saccade_wait_dur, duration_units=ms
          transition conditional "If !fixOn, Transition to Production": condition=!fixOn, target=Production
          transition conditional "If !handFixOn, Transition to Abort": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If saccade_wait Expired, Transition to Production": target=Production, timer=saccade_wait
        task_system_state "Production"
          action start_timer "Start saccadeTime": timer=saccadeTime, duration=handTimeDur, duration_units=ms
          transition conditional "If on_targ, Transition to TargetAcquired": condition=on_targ, target=TargetAcquired
          transition conditional "If !handFixOn, Transition to Abort 2": condition=abs((ai0-centerV)/(rightV-centerV)*amp*gainV-handFixX2)>leverFixWinInit/2, target=Abort
          transition timer_expired "If saccadeTime Expired, Transition to No Saccade": target=No Saccade, timer=saccadeTime
        task_system_state "TargetAcquired"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
  protocol "_blockedTwoPrior handEye randWithReplace with fixOff after SET removeCursor removeBall": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Eyelink 2": device=Eyelink 1000
    action start_device_IO "Start Mouse Input Device 2": device=Mouse Input Device
    action start_device_IO "Start NIDaq Device 2": device=NIDaq Device
    action assignment "Assign bonusRewDur 2": variable=bonusRewDur, value=0
    action assignment "Assign consecutiveCorrect 2": variable=consecutiveCorrect, value=-1
    action assignment "Assign pstop 3": variable=pstop, value=0
    action assignment "Assign fix_red 5": variable=fix_red, value=1
    action assignment "Assign fix_green 4": variable=fix_green, value=1
    action assignment "Assign fix_blue 5": variable=fix_blue, value=1
    action assignment "Assign trialNum": variable=trialNum, value=trialNumBlockLong
    action queue_stimulus "Queue Stimulus 4": stimulus=New Blank Screen
    action update_stimulus_display "Update Stimulus Display 5"
    block "New Block": nsamples=10000, sampling_method=cycles, selection=random_without_replacement
      task_system "longHandTrials 333329"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign idHandEye 3": variable=idHandEye, value=0
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign handFixY 9": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=0
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "shortHandTrials S333329"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign idHandEye 4": variable=idHandEye, value=0
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlocksShort": variable=trialNumBlockShort, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign handFixY 10": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=900
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=1
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=0
          action assignment "Set handFixG to 8": variable=handFixG, value=0
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=480
          action assignment "Select interval_max": variable=interval_max, value=800
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "shortEyeTrials S333349"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign idHandEye 5": variable=idHandEye, value=1
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlocksShort": variable=trialNumBlockShort, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=dFixY
          action assignment "Assign handFixY 11": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=900
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=1
          action assignment "Assign fix_green": variable=fix_green, value=0
          action assignment "Assign fix_blue": variable=fix_blue, value=0
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=1
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=480
          action assignment "Select interval_max": variable=interval_max, value=800
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
      task_system "longEyeTrials 3333499"
        task_system_state "Initial"
          action report "Announce Begin State System": message=State system beginning
          action assignment "Assign idHandEye 6": variable=idHandEye, value=1
          action assignment "Assign localTrials": variable=localTrials, value=0
          action assignment "Assign trialNumBlockLong": variable=trialNumBlockLong, value=min(round(-meanTrialNumBlock*logn(rand(0,1))) + minTrialNumBlock, maxTrialNumBlock)
          action assignment "Assign theta": variable=theta, value=180
          action assignment "Assign fix_win 2": variable=fix_win, value=7
          action assignment "Assign amp 2": variable=amp, value=10
          action assignment "Assign ao1": variable=ao0, value=10
          action assignment "Assign consecutiveCorrect 4": variable=consecutiveCorrect, value=0
          action assignment "Assign consecutiveIncorrect 5": variable=consecutiveIncorrect, value=0
          action assignment "Assign fixY": variable=fixY, value=-dFixY
          action assignment "Assign handFixY 12": variable=handFixY, value=fixY-(fix_sz+handFixSz)/2
          action assignment "Assign iti 2": variable=iti, value=600
          action assignment "Assign centerV 2": variable=centerV, value=(leftV+rightV)/2
          action assignment "Assign fix_red": variable=fix_red, value=0
          action assignment "Assign fix_green": variable=fix_green, value=0
          action assignment "Assign fix_blue": variable=fix_blue, value=1
          action assignment "Set handFixB to 7": variable=handFixB, value=1
          action assignment "Set handFixG to 8": variable=handFixG, value=1
          action assignment "Set handFixR to 9": variable=handFixR, value=1
          action live_queue_stimulus "Live Queue Stimulus 2": stimulus=cursor
          action update_stimulus_display "Update Stimulus Display 8"
          action assignment "Select interval_min": variable=interval_min, value=800
          action assignment "Select interval_max": variable=interval_max, value=1200
          transition direct "Go to Fix On": target=Fix On
        task_system_state "Fix On"
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        task_system_state "Grace"
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        task_system_state "Trial Start"
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        task_system_state "Fix Time"
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        task_system_state "Target On"
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        task_system_state "Ready"
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        task_system_state "Set"
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        task_system_state "Set 2"
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        task_system_state "Production Interval"
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        task_system_state "Production"
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        task_system_state "TargetAcquired"
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        task_system_state "Reward"
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        task_system_state "End Trial"
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        task_system_state "ITI"
          action start_timer "Start ITI": timer=ITI, duration=iti, duration_units=ms
          transition timer_expired "If ITI Expired, Transition to Fix On": target=Fix On, timer=ITI
        task_system_state "Early or Late"
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        task_system_state "Abort"
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        task_system_state "After Ready"
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        task_system_state "After Set1"
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        task_system_state "No Saccade"
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        task_system_state "Bad"
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        task_system_state "No Fix"
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        task_system_state "Exit State System"
          action report "Announce Exit State System": message=Leaving state system
          transition yield "Return to parent task system"
